MaxMacros	60
Macro	0
#!Python
# ===================================================================
# ScriptName     test_beam_tilt
# Purpose:       plot beam tilt image shift at different stage z height
#                compared with CtfFind defocus.
# Author:        Generated for PACEtomo workflow
# ===================================================================

import csv
import time
from datetime import datetime

import matplotlib.pyplot as plt
import numpy as np
import serialem as sem

############ SETTINGS ############

# Beam tilt used for autofocus measurement [mrad]
sc=1.7335
tilt_angle_mrad_values = [-10.0,10.0]
tilt_angle_mrad_values = list(map((lambda x: x*sc), tilt_angle_mrad_values))

# Correction factors to beam tilt scale in conversion to defocus
correction = 1

# Target stage z values [microns] to calibrate at
# 1 um backlash applied before the first
target_stage_z_values = [1.5,1.0,0.5,0.0,-0.5,-1,-1.5]

# CTF search range [microns]
ctf_defocus_lo = -10.0
ctf_defocus_hi = -0.2

# Defocus convergence settings for setting each target defocus
target_stage_z_tolerance_um = 0.01
max_defocus_adjust_iterations = 5

# Number of autofocus cycles per test.
# Delta is computed using the last cycle's autofocus value.
autofocus_cycles = 1

# Output file names (written in current SerialEM working directory)
csv_measurements = "beam_tilt_autofocus_measurements.csv"
csv_summary = "beam_tilt_autofocus_summary.csv"
plot_file = "beam_tilt_autofocus_fits.png"

########## END SETTINGS ##########

xyz0 = sem.ReportStageXYZ()

def run_ctffind():
    """Run CtfFind on buffer A and return defocus in microns."""
    sem.NoMessageBoxOnError(1)
    try:
        cfind = sem.CtfFind("A", ctf_defocus_lo, ctf_defocus_hi)
    finally:
        sem.NoMessageBoxOnError(0)
    if len(cfind) == 0:
        sem.Echo("ERROR: CtfFind failed.")
        sem.Exit()
    return float(cfind[0]), float(cfind[-1])


def set_target_stage_z(target_stage_z):
    """Adjust focus to target defocus and verify with CtfFind."""
    sem.GoToLowDoseArea("R")
    sem.SetImageShift(0, 0)
    sem.MoveStageTo(xyz0[0],xyz0[1],xyz0[2]+target_stage_z)
    time.sleep(5)
    sem.ReportStageXYZ()
    current_defocus = np.nan
    for attempt in range(1):
        sem.L()
        current_defocus, _ = run_ctffind()
        error = target_stage_z - current_defocus
        sem.Echo(
            f"Target defocus check {attempt}/{max_defocus_adjust_iterations}: "
            f"current={current_defocus:.3f} um, target={target_stage_z:.3f} um, "
            f"error={error:.3f} um"
        )
        if True:
            return current_defocus
    sem.Echo(
        "WARNING: Target defocus not reached within tolerance after max iterations."
    )
    return current_defocus


def run_autofocus_trial(tilt_angle_mrad):
    """
    Execute one autofocus-like measurement with a given beam tilt_angle.
    Returns:
      defocus_measured [microns], speed_x [nm/s], speed_y [nm/s]
    """
    beam_tilt = sem.ReportBeamTilt()
    tilt_x_orig = float(beam_tilt[0])
    tilt_y_orig = float(beam_tilt[1])
    tilt_x_plus = tilt_x_orig + correction * tilt_angle_mrad

    pixel_size_binned = float(sem.ReportCurrentPixelSize("R"))
    binning = float(sem.ReportBinning("R"))
    pixel_size_unbinned = pixel_size_binned / binning

    # Positive tilt
    sem.SetBeamTilt(tilt_x_plus, tilt_y_orig)
    bt = sem.ReportBeamTilt()
    sem.Echo(f"ActuralBeamTilt: {float(bt[0]):.5f} ")
    sem.F() #acquire image with Focus preset
    sem.ResetClock()
    sem.Copy("A", "L")

    # Zero tilt
    sem.SetBeamTilt(tilt_x_orig, tilt_y_orig)
    sem.F()
    sem.AlignTo("L", 1)
    align_shift_1 = sem.ReportAlignShift()
    disp_x1_px = float(align_shift_1[0])
    disp_y1_px = float(align_shift_1[1])

    # Positive tilt again to correct for drift
    sem.SetBeamTilt(tilt_x_plus, tilt_y_orig)
    sem.F()
    sem.AlignTo("L", 1)
    align_shift_2 = sem.ReportAlignShift()
    disp_x2_px = float(align_shift_2[0])
    disp_y2_px = float(align_shift_2[1])
    elapsed = float(sem.ReportClock())

    # Align to origin
    sem.SetBeamTilt(tilt_x_orig, tilt_y_orig)

    drift_x = disp_x2_px * pixel_size_unbinned
    drift_y = disp_y2_px * pixel_size_unbinned
    speed_x = drift_x / elapsed if elapsed > 0 else 0.0
    speed_y = drift_y / elapsed if elapsed > 0 else 0.0

    displacement_from_tilt_x = (disp_x1_px - disp_x2_px / 2.0) * pixel_size_unbinned
    displacement_from_tilt_y = (disp_y1_px - disp_y2_px / 2.0) * pixel_size_unbinned
    displacement = np.sqrt(
        displacement_from_tilt_x * displacement_from_tilt_x
        + displacement_from_tilt_y * displacement_from_tilt_y
    )

    if displacement_from_tilt_x == 0:
        sign = 1.0
    else:
        sign = displacement_from_tilt_x / abs(displacement_from_tilt_x)

    defocus_measured = -1.0 * sign * displacement

    return defocus_measured, speed_x, speed_y

def fit_auto_focus(corrections, af_vals):
    """Linear fit of delta vs correction; returns slope, intercept, root."""
    result, residuals, rank, singular_values, rcond = np.polyfit(corrections, af_vals, 1, full=True)
    slope = result[0]
    intercept = result[1]
    return slope, intercept, residuals

def save_measurements_csv(path, rows):
    fields = [
        "target_stage_z_um",
        "tilt_angle_mrad",
        "autofocus_cycle_used",
        "autofocus_defocus_cycle1_um",
        "autofocus_defocus_cycle2_um",
        "autofocus_defocus_um",
        "ctf_defocus_um",
        "delta_um",
        "ctf_resolution_A",
        "drift_speed_x_nm_per_s",
        "drift_speed_y_nm_per_s",
    ]
    with open(path, "w", newline="") as fh:
        writer = csv.DictWriter(fh, fieldnames=fields)
        writer.writeheader()
        writer.writerows(rows)


def save_summary_csv(path, rows):
    fields = [
        "target_stage_z_um",
        "fit_slope",
        "fit_intercept",
        "fit_residuals",
    ]
    with open(path, "w", newline="") as fh:
        writer = csv.DictWriter(fh, fieldnames=fields)
        writer.writeheader()
        writer.writerows(rows)
        writer.writerow(
            {
                "target_stage_z_um": "MEAN",
                "fit_slope": "",
                "fit_intercept": "",
                "fit_residuals": "",
            }
        )


def make_plot(path, grouped_results):
    n = len(grouped_results)
    ncols = 2
    nrows = int(np.ceil(n / ncols))
    fig, axes = plt.subplots(nrows, ncols, figsize=(12, 4 * nrows), tight_layout=True)
    axes = np.atleast_1d(axes).ravel()

    for i, res in enumerate(grouped_results):
        ax = axes[i]
        print(res)
        x = np.array(res["tilt_angle_mrad_values"], dtype=float)
        y = np.array(res["af_values"], dtype=float)
        slope = res["slope"]
        intercept = res["intercept"]
        best = res["residuals"]

        ax.scatter(x, y, label="measurements")
        xfit = np.linspace(np.min(x), np.max(x), 200)
        ax.plot(xfit, slope * xfit + intercept, label="linear fit")
        ax.axhline(0, color="gray", linestyle="--", linewidth=1)
        if np.isfinite(slope):
            ax.axvline(slope, color="red", linestyle=":", linewidth=1)
            title = f"Stage Z {res['target_stage_z']:.2f} um, slope={slope:.4f}, intercept={intercept:.4f}"
        else:
            title = f"Stage Z {res['target_stage_z']:.2f} um, slope=NaN"
        ax.set_title(title)
        ax.set_xlabel("Beam tilt (mrad)")
        ax.set_ylabel("Autofocus value (?)")
        ax.legend()

    for j in range(i + 1, len(axes)):
        axes[j].axis("off")

    fig.savefig(path, dpi=150)
    plt.show()


def main():
    sem.SuppressReports()
    sem.Echo("##### Beam tilt calibration test #####")
    sem.Echo(f"Timestamp: {datetime.now().isoformat(timespec='seconds')}")
    sem.Echo(f"Testing beam tilts: {list(np.array(tilt_angle_mrad_values, dtype=float))}")
    sem.Echo(f"Target stage values from eucentric: {target_stage_z_values}")

    measurement_rows = []
    summary_rows = []
    grouped_results = []

    set_target_stage_z(target_stage_z_values[0]+1.0)
 
    for target_stage_z in target_stage_z_values:
        sem.Echo("------------------------------------------------")
        sem.Echo(f"Measuring target defocus for stage z {target_stage_z:.3f} um")
        reached_defocus = set_target_stage_z(target_stage_z)
        sem.Echo(f"CtffindDefocus: {reached_defocus:.3f} um")

        tilt_vals = []
        af_vals = []
        for tilt in tilt_angle_mrad_values:
            tilt = float(tilt)
            cycle_defocus = []
            speed_x = 0.0
            speed_y = 0.0
            for _ in range(autofocus_cycles):
                af_defocus, speed_x, speed_y = run_autofocus_trial(tilt)
                cycle_defocus.append(af_defocus)
            af_defocus_used = cycle_defocus[-1]
            cycle1 = cycle_defocus[0] if len(cycle_defocus) >= 1 else np.nan
            cycle2 = cycle_defocus[1] if len(cycle_defocus) >= 2 else np.nan

            sem.L()
            ctf_defocus, ctf_res = run_ctffind()
            delta = af_defocus_used - ctf_defocus

            sem.Echo(
                f"target={target_stage_z:.3f} um, tilt={tilt:.4f}, "
                f"AF(last of {autofocus_cycles})={af_defocus_used:.4f} um, "
                f"CTF={ctf_defocus:.4f} um, delta={delta:.4f} um, "
                f"drift=({speed_x:.3f}, {speed_y:.3f}) nm/s"
            )

            measurement_rows.append(
                {
                    "target_stage_z_um": target_stage_z,
                    "tilt_angle_mrad": tilt,
                    "autofocus_cycle_used": autofocus_cycles,
                    "autofocus_defocus_cycle1_um": cycle1,
                    "autofocus_defocus_cycle2_um": cycle2,
                    "autofocus_defocus_um": af_defocus_used,
                    "ctf_defocus_um": ctf_defocus,
                    "delta_um": delta,
                    "ctf_resolution_A": ctf_res,
                    "drift_speed_x_nm_per_s": speed_x,
                    "drift_speed_y_nm_per_s": speed_y,
                }
            )
            tilt_vals.append(tilt)
            af_vals.append(af_defocus_used)

        slope, intercept, residuals = fit_auto_focus(tilt_vals, af_vals)
        summary_rows.append(
            {
                "target_stage_z_um": target_stage_z,
                "fit_slope": slope,
                "fit_intercept": intercept,
                "fit_residuals": residuals,
            }
        )
        grouped_results.append(
            {
                "target_stage_z": target_stage_z,
                "tilt_angle_mrad_values": tilt_vals,
                "af_values": af_vals,
                "slope": slope,
                "intercept": intercept,
                "residuals": residuals,
            }
        )
        sem.Echo(
            f"Fitted slope for defocus {target_stage_z:.3f} um: {slope:.6f}, "
            f"Fitted intercept for defocus {target_stage_z:.3f} um: {intercept:.6f}"
        )

    sem.MoveStageTo(xyz0[0],xyz0[1],xyz0[2])

    save_measurements_csv(csv_measurements, measurement_rows)
    save_summary_csv(csv_summary, summary_rows)
    make_plot(plot_file, grouped_results)

    sem.Echo("------------------------------------------------")
    sem.Echo("Fitted beam tilt correction values by target defocus:")
    for row in summary_rows:
        sem.Echo(
            f"  defocus {float(row['target_stage_z_um']):.3f} um -> "
        )
    sem.Echo(f"Saved measurements CSV: {csv_measurements}")
    sem.Echo(f"Saved summary CSV: {csv_summary}")
    sem.Echo(f"Saved fit plot: {plot_file}")

    sem.SuppressReports(0)
    sem.Exit()


if __name__ == "__main__":
    main()
EndMacro
Macro	2
#!Python
# ===================================================================
# ScriptName     LAFIS calibration
# Purpose:       calibrate laser alignment aberration free image shift
# Author:        Anchi Cheng, Misha Kopylov
# ===================================================================

import csv
from datetime import datetime

import matplotlib.pyplot as plt
import numpy as np
import serialem as sem

############ SETTINGS ############
image_shift_delta_um = [(0.0,-5.0)]
c3offset = -130
xt_is_matrix = [[0.000219, -0.000259],[0.000902, 0.000264]] #26aug18, 110kx, 1.4um 
xt_is_matrix = [[0.000251,-0.000302],[0.000971,0.000289]]
df_is_matrix = [[0.041381,0.012342], [0.041381,0.012342]]
sem.Echo("***Running X-Tilt LAFIS***")
sem.Echo("DIAGNOSTIC MESSAGE: Current image shift:")
sem.ReportImageShift()
sem.Echo("DIAGNOSTIC MESSAGE: Current beam tilt:")
sem.ReportBeamTilt()
sem.Echo("script starts here")

sem.SetImageShift(0,0)
#sem.SetXLensDeflector(2, -0.0005444, -0.001217) #Reset to original X-tilt values
start_offset = sem.ReportImageDistanceOffset()

sem.SetImageDistanceOffset(start_offset+c3offset)
sem.T()
sem.Pause("Checkt X-tilt at no Image Shift")


def float_tuple(input_str_tuple):
   return (float(input_str_tuple[0]), float(input_str_tuple[1]))

def get_values():
   image_shift = sem.ReportImageShift()
   beam_tilt = sem.ReportBeamTilt()
   xtilt = sem.ReportXLensDeflector(2)
   obj_stg = sem.ReportObjectiveStigmator()
   defocus = sem.ReportDefocus()
   return float_tuple(image_shift),float_tuple(beam_tilt), float_tuple(xtilt), float_tuple(obj_stg), float(defocus)

def calc_xt_is(xt0, is_delta):
   xt1 = [0.0,0.0]
   xt1[0] = xt0[0]+is_delta[0]*xt_is_matrix[0][0]+is_delta[1]*xt_is_matrix[1][0]
   xt1[1] = xt0[1]+is_delta[0]*xt_is_matrix[0][1]+is_delta[1]*xt_is_matrix[1][1]
   return xt1

def calc_df_is(df0, is_delta):
   df1 = 0.0
   df1 =df0+is_delta[0]*df_is_matrix[0][0]+is_delta[1]*df_is_matrix[1][1]
   return df1

is0, bt0, xt0, stg0, df0 = get_values()

for delta in image_shift_delta_um:
   sem.SetImageShift(is0[0]+delta[0], is0[1]+delta[1])

   sem.AdjustBeamTiltforIS()
   is1, bt1, xt1, stg1, df1 = get_values()
 
   sem.Echo("xt adjusted")
   xt = calc_xt_is(xt0, delta)
   df = calc_df_is(df0, delta)
   sem.SetXLensDeflector(2, xt[0], xt[1])
   sem.SetDefocus(df)
   sem.SetImageDistanceOffset(start_offset+c3offset)
   sem.T()
   sem.Pause("Adjust X-tilt")

   is2, bt2, xt2, stg2, df2 = get_values()
   sem.T()
   for i in (0,1):
      if delta[i]:
         sem.Echo('----XT---%d-------' % i)
         sem.Echo('xt_delta %.6f, %.6f' % ((xt2[0]-xt0[0])/delta[i],(xt2[1]-xt0[1])/delta[i]))
   for i in (0,1):
      if delta[i]:
         sem.Echo('---DEF----%d-------' % i)
         sem.Echo('df_delta %.6f' % ((df2-df0)/delta[i]))
   sem.SetDefocus(df0)
   sem.SetObjectiveStigmator(stg0[0],stg0[1])
   sem.SetXLensDeflector(2,xt0[0],xt0[1])
   sem.SetBeamTilt(bt0[0], bt0[1])
sem.SetDefocus(df0)
sem.SetObjectiveStigmator(stg0[0],stg0[1])
sem.SetImageShift(is0[0],is0[1])
sem.SetXLensDeflector(2,xt0[0],xt0[1])
sem.SetImageDistanceOffset(start_offset)
print(get_values())
EndMacro
Macro	3
#!Python
#ScriptName laser_image-shift_xtilt_correction
# python for Laser Image-Shift XTilt correction only
import serialem as sem

#xt_is_matrix = [[0.000312, -0.000352],[0.001120, 0.000281]] #26jul16a
#xt_is_matrix = [[0.000312, -0.000352],[0.001069, 0.000257]]
#xt_is_matrix = [[0.000324, -0.000347],[0.001100, 0.0002815]]  #26jul23
#xt_is_matrix = [[0.000219, -0.000259],[0.000902, 0.000264]] #26aug18, 110kx, 1.4um 
#xt_is_matrix = [[0.00031648, -0.0003773], [0.00106358, 0.00029595]] #26sep17, 54kx, ss6, 1.5IA
#xt_is_matrix = [[0.0002538, -0.00029750], [0.000787444, 0.0002514]] # p26sep11b 110x, 1.4 um
#xt_is_matrix = [[0.00022244, -0.000256937], [0.000710469, 0.0002146357]] # p26sep19a 110x, 1.4 um
xt_is_matrix = [[0.00024965200894843043, -0.0002568478985382952], [0.0008983, 0.000260]]
df_is_matrix = [[0.041381,0.012342],[ 0.041381,0.012342]]


def float_tuple(input_str_tuple):
   return (float(input_str_tuple[0]), float(input_str_tuple[1]))

def get_values():
   image_shift = sem.ReportImageShift()
   beam_tilt = sem.ReportBeamTilt()
   xtilt = sem.ReportXLensDeflector(2)
   obj_stg = sem.ReportObjectiveStigmator()
   defocus = sem.ReportDefocus()
   return float_tuple(image_shift),float_tuple(beam_tilt), float_tuple(xtilt), float_tuple(obj_stg), float(defocus)

def calc_xt_is(xt0, is_delta):
   xt1 = [0.0,0.0]
   xt1[0] = xt0[0]+is_delta[0]*xt_is_matrix[0][0]+is_delta[1]*xt_is_matrix[1][0]
   xt1[1] = xt0[1]+is_delta[0]*xt_is_matrix[0][1]+is_delta[1]*xt_is_matrix[1][1]
   return xt1

def calc_df_is(df0, is_delta):
   df1 = 0.0
   df1 =df0+is_delta[0]*df_is_matrix[0][0]+is_delta[1]*df_is_matrix[1][1]
   return df1

def main():
   '''
   Report xtilt and adjust according to image shift from 0,0
   '''
   # End result should be at is1==is2 and bt1==bt2
   is1, bt1, xt0, stg0, df0 = get_values()

   #Enable the next line if testing directly.
   #sem.AdjustBeamTiltforIS()
   delta = is1
   xt1 = calc_xt_is(xt0, delta)
   df1 = calc_df_is(df0, delta)
   sem.Echo('-----Setting XTilt and Defocus according to image shift----')
   sem.SetXLensDeflector(2, xt1[0], xt1[1])
   sem.SetDefocus(df1)
   is2, bt2, xt2, stg2, df2 = get_values()
   #Enable the next line so the AjustBeamTiltforIS is still applied before script ends.
   sem.T()
   #sem.FixComaByCTF(1,1,0)
   #sem.SetXLensDeflector(2, xt0[0], xt0[1])

if __name__=='__main__':
    main()
EndMacro
Macro	4
#!Python
# ===================================================================
# ScriptName     reset frame stack mdoc ronchi results
# Purpose:       Set mdoc keys related to ronchi analysis to empty
#                string to make sure it is not duplicated
# Author:        Josh Dickerson; Generated from PACEtomo
# ===================================================================
# use SEMargStrings to pass parameter from SEM scripting
sem_params = SEMargStrings

if sem_params:
 	ronchiMaxMeasureCount = sem_params[0]
else:
    ronchiMaxMeasureCount = 1

def reset_ronchi_measure_count():
    global ronchiMaxMeasureCount
    for c0 in range(ronchiMaxMeasureCount):
		c1 = c0 + 1 #base 1
        sem.AddToNextFrameStackMdoc(f'RonchiKs{c1:02d}', '')
        sem.AddToNextFrameStackMdoc(f'RonchiPhases{c1:02d}','')

reset_ronchi_measure_count()
EndMacro
Macro	5
#!Python
# ===================================================================
# ScriptName     beam_tilt_autofocus
# Purpose:       plot beam tilt image shift at different stage z height
#                compared with CtfFind defocus.
# Author:        Josh Dickerson; Generated from PACEtomo
# ===================================================================

import csv
import time
from datetime import datetime

import matplotlib.pyplot as plt
import numpy as np
import serialem as sem

############ SETTINGS ############

# Beam tilt used for autofocus measurement [mrad]
sc=1.7335
tilt_angle_mrad_values = [-10.0,10.0]
tilt_angle_mrad_values = list(map((lambda x: x*sc), tilt_angle_mrad_values))

# Correction factors to beam tilt scale in conversion to defocus
correction = 1


# Defocus convergence settings for setting each target defocus
target_stage_z_tolerance_um = 0.01
max_defocus_adjust_iterations = 5

# Number of autofocus cycles per test.
# Delta is computed using the last cycle's autofocus value.
autofocus_cycles = 1

# Output file names (written in current SerialEM working directory)
csv_measurements = "beam_tilt_autofocus_measurements.csv"
csv_summary = "beam_tilt_autofocus_summary.csv"
plot_file = "beam_tilt_autofocus_fits.png"

########## END SETTINGS ##########

xyz0 = sem.ReportStageXYZ()

def run_autofocus_trial(tilt_angle_mrad):
    """
    Execute one autofocus-like measurement with a given beam tilt_angle.
    Returns:
      defocus_measured [microns], speed_x [nm/s], speed_y [nm/s]
    """
    beam_tilt = sem.ReportBeamTilt()
    tilt_x_orig = float(beam_tilt[0])
    tilt_y_orig = float(beam_tilt[1])
    tilt_x_plus = tilt_x_orig + correction * tilt_angle_mrad

    pixel_size_binned = float(sem.ReportCurrentPixelSize("R"))
    binning = float(sem.ReportBinning("R"))
    pixel_size_unbinned = pixel_size_binned / binning

    # Positive tilt
    sem.SetBeamTilt(tilt_x_plus, tilt_y_orig)
    bt = sem.ReportBeamTilt()
    sem.Echo(f"ActuralBeamTilt: {float(bt[0]):.5f} ")
    sem.F() #acquire image with Focus preset
    sem.ResetClock()
    sem.Copy("A", "L")

    # Zero tilt
    sem.SetBeamTilt(tilt_x_orig, tilt_y_orig)
    sem.F()
    sem.AlignTo("L", 1)
    align_shift_1 = sem.ReportAlignShift()
    disp_x1_px = float(align_shift_1[0])
    disp_y1_px = float(align_shift_1[1])

    # Positive tilt again to correct for drift
    sem.SetBeamTilt(tilt_x_plus, tilt_y_orig)
    sem.F()
    sem.AlignTo("L", 1)
    align_shift_2 = sem.ReportAlignShift()
    disp_x2_px = float(align_shift_2[0])
    disp_y2_px = float(align_shift_2[1])
    elapsed = float(sem.ReportClock())

    # Align to origin
    sem.SetBeamTilt(tilt_x_orig, tilt_y_orig)

    drift_x = disp_x2_px * pixel_size_unbinned
    drift_y = disp_y2_px * pixel_size_unbinned
    speed_x = drift_x / elapsed if elapsed > 0 else 0.0
    speed_y = drift_y / elapsed if elapsed > 0 else 0.0

    displacement_from_tilt_x = (disp_x1_px - disp_x2_px / 2.0) * pixel_size_unbinned
    displacement_from_tilt_y = (disp_y1_px - disp_y2_px / 2.0) * pixel_size_unbinned
    displacement = np.sqrt(
        displacement_from_tilt_x * displacement_from_tilt_x
        + displacement_from_tilt_y * displacement_from_tilt_y
    )

    if displacement_from_tilt_x == 0:
        sign = 1.0
    else:
        sign = displacement_from_tilt_x / abs(displacement_from_tilt_x)

    defocus_measured = -1.0 * sign * displacement

    return defocus_measured, speed_x, speed_y

def fit_auto_focus(corrections, af_vals):
    """Linear fit of delta vs correction; returns slope, intercept, root."""
    result, residuals, rank, singular_values, rcond = np.polyfit(corrections, af_vals, 1, full=True)
    slope = result[0]
    intercept = result[1]
    return slope, intercept, residuals

def save_measurements_csv(path, rows):
    fields = [
        "target_stage_z_um",
        "tilt_angle_mrad",
        "autofocus_cycle_used",
        "autofocus_defocus_cycle1_um",
        "autofocus_defocus_cycle2_um",
        "autofocus_defocus_um",
        "ctf_defocus_um",
        "delta_um",
        "ctf_resolution_A",
        "drift_speed_x_nm_per_s",
        "drift_speed_y_nm_per_s",
    ]
    with open(path, "w", newline="") as fh:
        writer = csv.DictWriter(fh, fieldnames=fields)
        writer.writeheader()
        writer.writerows(rows)


def save_summary_csv(path, rows):
    fields = [
        "target_stage_z_um",
        "fit_slope",
        "fit_intercept",
        "fit_residuals",
    ]
    with open(path, "w", newline="") as fh:
        writer = csv.DictWriter(fh, fieldnames=fields)
        writer.writeheader()
        writer.writerows(rows)
        writer.writerow(
            {
                "target_stage_z_um": "MEAN",
                "fit_slope": "",
                "fit_intercept": "",
                "fit_residuals": "",
            }
        )


def make_plot(path, grouped_results):
    n = len(grouped_results)
    ncols = 2
    nrows = int(np.ceil(n / ncols))
    fig, axes = plt.subplots(nrows, ncols, figsize=(12, 4 * nrows), tight_layout=True)
    axes = np.atleast_1d(axes).ravel()

    for i, res in enumerate(grouped_results):
        ax = axes[i]
        print(res)
        x = np.array(res["tilt_angle_mrad_values"], dtype=float)
        y = np.array(res["af_values"], dtype=float)
        slope = res["slope"]
        intercept = res["intercept"]
        best = res["residuals"]

        ax.scatter(x, y, label="measurements")
        xfit = np.linspace(np.min(x), np.max(x), 200)
        ax.plot(xfit, slope * xfit + intercept, label="linear fit")
        ax.axhline(0, color="gray", linestyle="--", linewidth=1)
        if np.isfinite(slope):
            ax.axvline(slope, color="red", linestyle=":", linewidth=1)
            title = f"Stage Z {res['target_stage_z']:.2f} um, slope={slope:.4f}, intercept={intercept:.4f}"
        else:
            title = f"Stage Z {res['target_stage_z']:.2f} um, slope=NaN"
        ax.set_title(title)
        ax.set_xlabel("Beam tilt (mrad)")
        ax.set_ylabel("Autofocus value (?)")
        ax.legend()

    for j in range(i + 1, len(axes)):
        axes[j].axis("off")

    fig.savefig(path, dpi=150)
    plt.show()


def main():
    sem.SuppressReports()
    sem.Echo("##### Beam tilt autofocus #####")
    sem.Echo(f"Timestamp: {datetime.now().isoformat(timespec='seconds')}")

    measurement_rows = []
    summary_rows = []
    grouped_results = []
    tilt_vals = []
    af_vals = []
    for tilt in tilt_angle_mrad_values:
            tilt = float(tilt)
            cycle_defocus = []
            speed_x = 0.0
            speed_y = 0.0
            for _ in range(autofocus_cycles):
                af_defocus, speed_x, speed_y = run_autofocus_trial(tilt)
                cycle_defocus.append(af_defocus)
            af_defocus_used = cycle_defocus[-1]
            cycle1 = cycle_defocus[0] if len(cycle_defocus) >= 1 else np.nan
            cycle2 = cycle_defocus[1] if len(cycle_defocus) >= 2 else np.nan

            sem.L()
            ctf_defocus, ctf_res = run_ctffind()
            delta = af_defocus_used - ctf_defocus

            sem.Echo(
                f"target={target_stage_z:.3f} um, tilt={tilt:.4f}, "
                f"AF(last of {autofocus_cycles})={af_defocus_used:.4f} um, "
                f"CTF={ctf_defocus:.4f} um, delta={delta:.4f} um, "
                f"drift=({speed_x:.3f}, {speed_y:.3f}) nm/s"
            )

            measurement_rows.append(
                {
                    "target_stage_z_um": target_stage_z,
                    "tilt_angle_mrad": tilt,
                    "autofocus_cycle_used": autofocus_cycles,
                    "autofocus_defocus_cycle1_um": cycle1,
                    "autofocus_defocus_cycle2_um": cycle2,
                    "autofocus_defocus_um": af_defocus_used,
                    "ctf_defocus_um": ctf_defocus,
                    "delta_um": delta,
                    "ctf_resolution_A": ctf_res,
                    "drift_speed_x_nm_per_s": speed_x,
                    "drift_speed_y_nm_per_s": speed_y,
                }
            )
            tilt_vals.append(tilt)
            af_vals.append(af_defocus_used)

        slope, intercept, residuals = fit_auto_focus(tilt_vals, af_vals)
        summary_rows.append(
            {
                "target_stage_z_um": target_stage_z,
                "fit_slope": slope,
                "fit_intercept": intercept,
                "fit_residuals": residuals,
            }
        )
        grouped_results.append(
            {
                "target_stage_z": target_stage_z,
                "tilt_angle_mrad_values": tilt_vals,
                "af_values": af_vals,
                "slope": slope,
                "intercept": intercept,
                "residuals": residuals,
            }
        )
        sem.Echo(
            f"Fitted slope for defocus {target_stage_z:.3f} um: {slope:.6f}, "
            f"Fitted intercept for defocus {target_stage_z:.3f} um: {intercept:.6f}"
        )

    sem.MoveStageTo(xyz0[0],xyz0[1],xyz0[2])

    save_measurements_csv(csv_measurements, measurement_rows)
    save_summary_csv(csv_summary, summary_rows)
    make_plot(plot_file, grouped_results)

    sem.Echo("------------------------------------------------")
    sem.Echo("Fitted beam tilt correction values by target defocus:")
    for row in summary_rows:
        sem.Echo(
            f"  defocus {float(row['target_stage_z_um']):.3f} um -> "
        )
    sem.Echo(f"Saved measurements CSV: {csv_measurements}")
    sem.Echo(f"Saved summary CSV: {csv_summary}")
    sem.Echo(f"Saved fit plot: {plot_file}")

    sem.SuppressReports(0)
    sem.Exit()


if __name__ == "__main__":
    main()
EndMacro
Macro	6
#!Python
#ScriptName quick_ronchi_magic_phase_measurment
# Purpose:       Measure best ronchigram phase offset and standing wave periodicity correction scale.
#                       Must be measured at C3 parallel illumination offset micromap step size 5 and two clicks down from on-plane
# Author:        Josh Dickerson, Eric Cooper
# Additional Documentation: Anchi Cheng
# ===================================================================
#be step size 5 and two clicks down from on-plane ( = 0.0020 logical unit in TFS micromap)
print("=== Collecting Ronchigram ===")

import sys
import numpy as np
import serialem as sem
import matplotlib.pyplot as pltA
import matplotlib.colors as colors

c3offset = 0
pixel_size = 0.98e-4 * 2 #um
binning = 32

target_phase_A=   0.86642708 # Vertical Laser
target_phase_B = -2.75644112  # Horizontal Laser
   

c3_correction_factor = 20/9.3
#correct_ks = np.array([[5.722, -0.389] ,  [0.623, 5.878]])
correct_ks = np.array([[10.160, -0.662]  , [0.934, 9.731]])

def plot_complex_image(Fourier):
    # 1. Amplitude and Phase calculation
    amplitude = np.abs(Fourier) / np.max(np.abs(Fourier))  # Normalize to [0, 1]
    phase = np.angle(Fourier)

    # 2. Map Phase to Hue and Amplitude to Brightness
    h = (phase + np.pi) / (2 * np.pi)
    s = np.ones_like(amplitude) 
    v = amplitude              

    # 3. Convert HSV to RGB
    hsv_image = np.dstack((h, s, v))
    rgb_image = colors.hsv_to_rgb(hsv_image)

    # 4. Plot the image
    plt.imshow(rgb_image)

    # Display the plot
    plt.show()

def bin_image(image, binning = 32):
  bins = [image[i:(image.shape[0]//binning * binning):binning,j:(image.shape[1]//binning * binning):binning] for i in range(binning) for j in range(binning)]
  binned = np.sum(bins,axis=0)
  return binned

def find_fourier(binned, size = 4096):
  s = np.array([size,size])
  fourier = np.fft.fftshift(np.fft.fft2(binned - np.mean(binned),s))
  return fourier

def find_fourier_centered(image, padded_size = 4096):
    """
    Computes Fourier Transform and reports phases as if they were centered on the image center, rather than the top left corner. This is done by applying a correction phase to the Fourier Transform.
    """
    Fourier = np.fft.fftshift(np.fft.fft2(image-np.mean(image), s=(padded_size, padded_size)))
    center = np.array(image.shape) / 2 
    grid_y, grid_x = np.indices((padded_size, padded_size), dtype=float)

    shifted_y = grid_y-padded_size/2
    shifted_x = grid_x-padded_size/2

    correction_phase_x = np.exp(2j * np.pi * shifted_x/padded_size * center[1])
    correction_phase_y = np.exp(2j * np.pi * shifted_y/padded_size * center[0])
    correction_phase = correction_phase_x * correction_phase_y
    Fourier_corrected = Fourier * correction_phase
    return Fourier_corrected

def find_peaks(fourier, radius = 100, npeaks = 4, verbose = False):
  fourier_abs = np.abs(fourier).copy() # Work on a copy to avoid modifying the original
  peak_locations = []
  phases = []

  size = np.shape(fourier_abs)[0]
  #delete center
  peak_coords = [size//2, size//2]
  fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

  for i in range(npeaks):
      # Find the index of the maximum value in the flattened array
      max_idx = np.argmax(fourier_abs)

      # Convert the flattened index to 2D coordinates
      # np.shape(fourier_abs) gives (rows, cols)
      peak_coords = np.unravel_index(max_idx, fourier_abs.shape)

      # Store the coordinates
      peak_locations.append(peak_coords)

      # Set the found peak and region surrounding to zero to prevent re-selection in the next iteration
      fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

      phase = np.angle(fourier[peak_coords])
      phases.append(phase)

  peak_locations_centered = np.array(peak_locations)-size/2

  if verbose:
    print(f"Coordinates of the {npeaks} highest peaks:")
    for i, coords in enumerate(peak_locations):
        print(f"Peak {i+1}: {coords}")

  return peak_locations_centered, np.array(phases)

def find_ks_phases(CorrectedFourier, pixel_size_um, npeaks = 2, radius = 100):
  peaks, phases = find_peaks(CorrectedFourier, radius = radius, npeaks = npeaks*2) # We'll filter out the duplicates
  angles = report_angles(peaks, start_angle=-135)
  ordering = np.argsort(angles)
  peaks = peaks[ordering]
  phases = phases[ordering]
  phases = phases[:npeaks]
  peaks = peaks[:npeaks]
  ks = convert_to_k(peaks, binning = 1, fourier_size = CorrectedFourier.shape[0], pixel_size_um = pixel_size_um)
  return ks, phases

def convert_to_k(peak_locations, binning = 1, fourier_size = 4096, pixel_size_um = 2.7/1e4):
  ks = peak_locations / fourier_size * 1/(pixel_size_um * binning)
  return ks

def report_angles(ks, start_angle = -135):
  angles = np.mod(np.arctan2(-ks[:,0],ks[:,1])*180/np.pi-start_angle,360)+start_angle
  return angles

def sort_ks(ks,start_angle = -135):
  angles = report_angles(ks, start_angle)
  ks_sorted = ks[np.argsort(angles)]
  return ks_sorted

def convert_to_plane_offset(ks, focal_length = 7):
  offset = ks / (2/1064e-3) * focal_length # ks are in um^-1
  return offset


xtX, xtY = sem.ReportXLensDeflector(2)

start_offset = sem.ReportImageDistanceOffset()
new_offset = start_offset + c3offset
print(new_offset)

sem.SetImageDistanceOffset(new_offset)
base = sem.ReportFrameBaseName()
if not base[1].endswith('_ronchi'):
    sem.SetFrameBaseName(0, 1, 0,  base[1] + "_ronchi")
sem.Delay(2, "s")
#sem.Search()
sem.T()
# reset after taking trial image
sem.SetFrameBaseName(0, 1, 0,  base[1])
sem.SetImageDistanceOffset(start_offset)

imageA = np.asarray(sem.bufferImage("A"))
print(imageA.shape)
binnedImage = bin_image(imageA, binning = binning)
imageFFT = find_fourier_centered(binnedImage)
ks, phases = find_ks_phases(imageFFT, pixel_size * binning)
sem.Echo("A")
sem.Echo("Measured Fringe Spacing")
sem.Echo(np.array2string(ks, formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured - Reference")
ks_err = ks-correct_ks
sem.Echo(np.array2string(ks_err,  formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured Phase")
sem.Echo(np.array2string(phases))

phase_err_A = np.mod(phases[0] - target_phase_A + np.pi, 2*np.pi) - np.pi
phase_err_B = np.mod(phases[1] - target_phase_B + np.pi, 2*np.pi) - np.pi

sem.Echo(f"Phase Correction V = {phase_err_A:.2f} rad, H = {phase_err_B:.2f} rad")

correction_x = 1e-5 * (phase_err_A * 0.212 + phase_err_B * 1.28)
correction_y = 1e-5 * (phase_err_A * 1.22 + phase_err_B * -0.243)

avg_err = (ks_err[0,0] + ks_err[1,1])/2
c3_correction = avg_err * c3_correction_factor

sem.Echo(f"C3 recommend correction: {c3_correction:.1f}")

sem.Echo(f"X tilt correction X = {correction_x:.3e}, Y ={correction_y:.3e}")
EndMacro
Macro	7
#!Python
#ScriptName quick_ronchi_correction
# Purpose:      Correct to on-node on-plane for xLPP based on ronchigram phase offset and standing wave periodicity
#                       Starting condition should be close to on-plane and within +/- half of standing wave periodicity
# Author:        Josh Dickerson, Eric Cooper
# Additional Documentation: Anchi Cheng
# ===================================================================

print("=== Collecting Ronchigram ===")

import sys
import numpy as np
import serialem as sem
import matplotlib.pyplot as plt
import matplotlib.colors as colors

c3offset = -20
pixel_size = 0.98e-4 * 2 #um
binning = 32

# use SEMargStrings to pass parameter from SEM scripting
sem_params = SEMargStrings

target_phase_A= 0.48524 # Vertical Laser
target_phase_B = -2.919554 # Horizontal Laser

if sem_params:
 	ronchiMeasureCount = sem_params[0]
else:
    ronchiMeasureCount = 1

# target_ks 2D matrix measured in ronchi_measure
correct_ks = np.array([[9.809, -0.701],   [0.895, 9.381]])
avg_norm = (np.linalg.norm(correct_ks[0]) + np.linalg.norm(correct_ks[1]))/2.0
c3_correction_factor = 20 /avg_norm

def plot_complex_image(Fourier):
    # 1. Amplitude and Phase calculation
    amplitude = np.abs(Fourier) / np.max(np.abs(Fourier))  # Normalize to [0, 1]
    phase = np.angle(Fourier)

    # 2. Map Phase to Hue and Amplitude to Brightness
    h = (phase + np.pi) / (2 * np.pi)
    s = np.ones_like(amplitude) 
    v = amplitude              

    # 3. Convert HSV to RGB
    hsv_image = np.dstack((h, s, v))
    rgb_image = colors.hsv_to_rgb(hsv_image)

    # 4. Plot the image
    plt.imshow(rgb_image)

    # Display the plot
    plt.show()

def bin_image(image, binning = 32):
  bins = [image[i:(image.shape[0]//binning * binning):binning,j:(image.shape[1]//binning * binning):binning] for i in range(binning) for j in range(binning)]
  binned = np.sum(bins,axis=0)
  return binned

def find_fourier(binned, size = 4096):
  s = np.array([size,size])
  fourier = np.fft.fftshift(np.fft.fft2(binned - np.mean(binned),s))
  return fourier

def find_fourier_centered(image, padded_size = 4096):
    """
    Computes Fourier Transform and reports phases as if they were centered on the image center, rather than the top left corner. This is done by applying a correction phase to the Fourier Transform.
    """
    Fourier = np.fft.fftshift(np.fft.fft2(image-np.mean(image), s=(padded_size, padded_size)))
    center = np.array(image.shape) / 2 
    grid_y, grid_x = np.indices((padded_size, padded_size), dtype=float)

    shifted_y = grid_y-padded_size/2
    shifted_x = grid_x-padded_size/2

    correction_phase_x = np.exp(2j * np.pi * shifted_x/padded_size * center[1])
    correction_phase_y = np.exp(2j * np.pi * shifted_y/padded_size * center[0])
    correction_phase = correction_phase_x * correction_phase_y
    Fourier_corrected = Fourier * correction_phase
    return Fourier_corrected

def find_peaks(fourier, radius = 100, npeaks = 4, verbose = False):
  fourier_abs = np.abs(fourier).copy() # Work on a copy to avoid modifying the original
  peak_locations = []
  phases = []

  size = np.shape(fourier_abs)[0]
  #delete center
  peak_coords = [size//2, size//2]
  fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

  for i in range(npeaks):
      # Find the index of the maximum value in the flattened array
      max_idx = np.argmax(fourier_abs)

      # Convert the flattened index to 2D coordinates
      # np.shape(fourier_abs) gives (rows, cols)
      peak_coords = np.unravel_index(max_idx, fourier_abs.shape)

      # Store the coordinates
      peak_locations.append(peak_coords)

      # Set the found peak and region surrounding to zero to prevent re-selection in the next iteration
      fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

      phase = np.angle(fourier[peak_coords])
      phases.append(phase)

  peak_locations_centered = np.array(peak_locations)-size/2

  if verbose:
    print(f"Coordinates of the {npeaks} highest peaks:")
    for i, coords in enumerate(peak_locations):
        print(f"Peak {i+1}: {coords}")

  return peak_locations_centered, np.array(phases)

def find_ks_phases(CorrectedFourier, pixel_size_um, npeaks = 2, radius = 100):
  peaks, phases = find_peaks(CorrectedFourier, radius = radius, npeaks = npeaks*2) # We'll filter out the duplicates
  angles = report_angles(peaks, start_angle=-135)
  ordering = np.argsort(angles)
  peaks = peaks[ordering]
  phases = phases[ordering]
  phases = phases[:npeaks]
  peaks = peaks[:npeaks]
  ks = convert_to_k(peaks, binning = 1, fourier_size = CorrectedFourier.shape[0], pixel_size_um = pixel_size_um)
  return ks, phases

def convert_to_k(peak_locations, binning = 1, fourier_size = 4096, pixel_size_um = 2.7/1e4):
  ks = peak_locations / fourier_size * 1/(pixel_size_um * binning)
  return ks

def report_angles(ks, start_angle = -135):
  angles = np.mod(np.arctan2(-ks[:,0],ks[:,1])*180/np.pi-start_angle,360)+start_angle
  return angles

def sort_ks(ks,start_angle = -135):
  angles = report_angles(ks, start_angle)
  ks_sorted = ks[np.argsort(angles)]
  return ks_sorted

def convert_to_plane_offset(ks, focal_length = 7):
  offset = ks / (2/1064e-3) * focal_length # ks are in um^-1
  return offset


xtX, xtY = sem.ReportXLensDeflector(2)

start_offset = sem.ReportImageDistanceOffset()
new_offset = start_offset + c3offset
print(new_offset)

sem.SetImageDistanceOffset(new_offset)
base = sem.ReportFrameBaseName()
sem.SetFrameBaseName(0, 1, 0,  base[1])
sem.Delay(2, "s")
base = sem.ReportFrameBaseName()
if not base[1].endswith('_ronchi'):
    sem.SetFrameBaseName(0, 1, 0,  base[1] + "_ronchi")
#sem.Search()
sem.T()
sem.SetImageDistanceOffset(start_offset)
sem.SetFrameBaseName(1, 1, 0,  base[1])

imageA = np.asarray(sem.bufferImage("A"))
print(imageA.shape)
binnedImage = bin_image(imageA, binning = binning)
imageFFT = find_fourier_centered(binnedImage)
ks, phases = find_ks_phases(imageFFT, pixel_size * binning)
sem.Echo("A")
sem.Echo("Measured Fringe Spacing")
sem.Echo(np.array2string(ks, formatter = {'float_kind':lambda x: "%.3f" % x}))
# add to frame stack mdoc
sem.AddToNextFrameStackMdoc(f'RonchiKs{ronchiMeasureCount:02d}', f"{np.array2string(ks.ravel(), precision=4)[1:-1]}")
sem.Echo("Measured - Reference")
ks_err = ks-correct_ks
sem.Echo(np.array2string(ks_err,  formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured Phase")
sem.Echo(np.array2string(phases))
sem.AddToNextFrameStackMdoc(f'RonchiPhases{ronchiMeasureCount:02d}',f"{phases[0]:.3f}    {phases[1]:.3f}")

phase_err_A = np.mod(phases[0] - target_phase_A + np.pi, 2*np.pi) - np.pi
phase_err_B = np.mod(phases[1] - target_phase_B + np.pi, 2*np.pi) - np.pi

sem.Echo(f"Phase Correction V = {phase_err_A:.2f} rad, H = {phase_err_B:.2f} rad")

correction_x = 1e-5 * (phase_err_A * 0.212 + phase_err_B * 1.28)
correction_y = 1e-5 * (phase_err_A * 1.22 + phase_err_B * -0.243)

avg_err = (ks_err[0,0] + ks_err[1,1])/2
c3_correction = avg_err * c3_correction_factor

sem.Echo(f"C3 recommend correction: {c3_correction:.1f}")

sem.Echo(f"X tilt correction X = {correction_x:.3e}, Y ={correction_y:.3e}")

c3offsetYN = 1 # sem.YesNoBox("Do You Want to Correct C3 offset?")

if c3offsetYN:
  sem.SetImageDistanceOffset(start_offset + c3_correction)
  sem.Echo(f"c3 offest adjused by {c3_correction}")

correctYN = 1 # sem.YesNoBox("Do You Want to Correct Phase?")

if correctYN:
   sem.SetXLensDeflector(2, xtX + correction_x, xtY + correction_y)
   print("Phase Shift Corrected")
EndMacro
Macro	8
#!Python
# ScriptName save data in python
import json
import os, time
from datetime import datetime

import serialem as sem

sem_params = SEMargStrings

if sem_params:
   filepath = sem_params[0]
   coma = (sem_params[1], sem_params[2])
else:
   filepath = 'test.json'
   coma = (0, 0)

sem.Echo('--------Saving optical values to %s' % os.path.join(os.getcwd(), filepath))

def float_tuple(input_str_tuple):
   try:
      return (float(input_str_tuple[0]), float(input_str_tuple[1]))
   except Exception as e:
      print('float conversion error: %s' %e)
      return (0,0)

def get_values():
   image_shift = sem.ReportImageShift()
   beam_tilt = sem.ReportBeamTilt()
   x_tilt = sem.ReportXLensDeflector(2)
   obj_stig = sem.ReportObjectiveStigmator()
   measured_coma = float_tuple(coma)
   print(measured_coma)
   return {
          'timestamp': datetime.now().strftime("%Y-%m-%d %H:%M:%S"),
          'image_shift':float_tuple(image_shift),
          'beam_tilt':float_tuple(beam_tilt),
          'x_tilt':float_tuple(x_tilt),
          'obj_stig':float_tuple(obj_stig),
          'measured_coma':float_tuple(measured_coma),
   }

def main():
   if os.path.isfile(filepath):
      with open(filepath, "r") as f:
         all_data = json.load(f)
   else:
      all_data =[]
   time.sleep(1)
   data = get_values()
   all_data.append(data)
   with open(filepath, "w") as f:
      json.dump(all_data, f, indent=2)
   sem.Echo('Value saved')

if __name__ == '__main__':
   main()
EndMacro
Macro	9
#!Python
# ScriptName Save xt0 and other origin values in temp_x0.json in current working directory

import json
import os
import serialem as sem

filepath = 'temp_xt0.json'
sem.Echo('--------Saving optical values to %s' % os.path.join(os.getcwd(), filepath))

def float_tuple(input_str_tuple):
   return (float(input_str_tuple[0]), float(input_str_tuple[1]))

def get_values():
   image_shift = sem.ReportImageShift()
   beam_tilt = sem.ReportBeamTilt()
   x_tilt = sem.ReportXLensDeflector(2)
   obj_stig = sem.ReportObjectiveStigmator()
   abs_focus = sem.ReportAbsoluteFocus()
   defocus = sem.ReportDefocus()
   c3_offset = sem.ReportImageDistanceOffset()
   return {'image_shift':float_tuple(image_shift),
         'beam_tilt':float_tuple(beam_tilt),
         'x_tilt':float_tuple(x_tilt),
         'obj_stig':float_tuple(obj_stig),
         'abs_focus':float(abs_focus),
         'defocus':float(defocus),
         'c3_offset':float(c3_offset),
   }

def main():
   data = get_values()
   with open(filepath, "w") as f:
      json.dump(data, f, indent=2)
   sem.Echo('Value saved')

if __name__ == '__main__':
   main()
EndMacro
Macro	10
#!Python
# ScriptName Script 11 Recall xt0 and other origin values from temp_xt0.json
import json
import os
import serialem as sem

filepath = 'temp_xt0.json'
sem.Echo('-------- Loading optical values from %s' % os.path.join(os.getcwd(), filepath))

with open(filepath, "r") as f:
   data = json.load(f)

sem.SetImageShift(data['image_shift'][0], data['image_shift'][1])
sem.SetBeamTilt(data['beam_tilt'][0],data['beam_tilt'][1])
sem.SetXLensDeflector(2, data['x_tilt'][0],data['x_tilt'][1])
sem.SetObjectiveStigmator(data['obj_stig'][0],data['obj_stig'][1])
sem.SetDefocus(data['defocus'])
sem.SetImageDistanceOffset(data['c3_offset'])
sem.Echo('Value reset')
EndMacro
Macro	11
MacroName LAFIS coma test on multiple image shift
#calls script 4 and script 8 as seen in SEM Script Editor (Base 1)

#SETTINGS
number_of_iter = 5
step = 2.5 # image shift step in um
with_laser = 1
do_coma_measurement = 0
number_of_ronchi_iter = 3
data_pattern = p26jul23a_xg_all_test11
data_filename = $data_pattern.json
SetFrameBaseName 1 1 0 $data_pattern

# END SETTINGS

offset = ($number_of_iter - 1) * $step / 2

if $with_laser > 0
   # start with good phase shift
   CallScript 8   #Laser magic phase correction
endif

# write to file
#CallScript 9 $data_filename 0 0

#CallScript 10 #save xt value in python (Base 1 in Script Editor but Base 0 in the script.txt file)
#reset saved all values in python
CallScript 11

comax = 0.0
comay = 0.0

ReportFrameBaseName
base0 = $ReportedValue2

Loop $number_of_iter i
   isx = ($i - 1) * $step - $offset
   Loop $number_of_iter j
      ReportFrameBaseName     
      base1 = $base0_$i_$j
      SetFrameBaseName 1 1 0 $base1
      isy = ($j - 1) * $step - $offset
      SetImageShift $isx $isy
      AdjustBeamTiltforIS
      #L
      Echo ---AFIS applyed---
      ReportXLensDeflector 2
      if $do_coma_measurement > 0
         Echo ---coma measurement with AFIS---
         ReportBeamTilt afis_btx afis_bty
         FixComaByCTF 0 1 0 1  #The last option suppress message box
         ReportBeamTilt coma_freex coma_freey
         comax = $coma_freex - $afis_btx
         comay = $coma_freey - $afis_bty
         SetBeamTilt $afis_btx $afis_bty
      endif
      CallScript 9 $data_filename $comax $comay
      Echo ---LAFIS applyed---
      CallScript 4   #Laser image-shift Xtilt correction
      CallScript 14
      R
      ReportImageShift
      Echo ****Adjusted Beam Tilt****
      ReportBeamTilt
      ReportXLensDeflector 2

      if $do_coma_measurement > 0
         Echo ---coma measurement with LAFIS
         ReportBeamTilt lafis_btx lafis_bty
         FixComaByCTF 0 1 0 1  #The last option suppress message box
         ReportBeamTilt coma_freex coma_freey
         comax = $coma_freex - $lafis_btx
         comay = $coma_freey - $lafis_bty
         SetBeamTilt $lafis_btx $lafis_bty
      endif
      CallScript 9 $data_filename $comax $comay

      if $with_laser > 0
         Echo ---Laser on-plane on-node correction---
         #Laser magic phase correction. measurement count is passed as argument
         Loop $number_of_ronchi_iter j
            CallScript 8 $j
         EndLoop
         ReportImageShift
         ReportBeamTilt
         ReportXLensDeflector 2
         CallScript 9 $data_filename $comax $comay
         base_rip = $base1_rip
         SetFrameBaseName 0 1 0 $base_rip
         CallScript 14
         R
         # reset ronchi measurement count for keys used
         CallScript 3 $number_of_ronchi_iter
      endif
      #reset all values in python (Base 1 in Script Editor but Base 0 in the script.txt file)
      CallScript 11
   EndLoop
EndLoop

#reset saved all values in python
CallScript 11
EndMacro
Macro	12
MacroName Script13 Running LAFIS+rip in Serialem native SPA workflow
# 1. Activate and set script in gui tree: /SerialEM/Navigator/Nav. Options./Run Script in Multi-shot
# 2. Set multi-shot pattern to use
# 3. Select items to acquire

######Settings#####
with_laser = 1
######End Settings######

Echo ******Running Script****
ReportDirectory
ReportFrameBaseName
base0 = $ReportedValue2

ReportImageShift is0
ReportBeamTilt bt0
ReportDefocus df0
Echo ........is $is0
ReportXLensDeflector 2
xt0_x = $ReportedValue1
xt0_y = $ReportedValue2
#Echo ......BEFORE XT $xt0_x $xt0_y

# Optical Modification Part
#L- part of LAFIS and defocus correction. Note: normal AFIS is already applied through the workflow calling this.
CallScript 4
#End LAFIS
if $with_laser > 0
   #RIP 3 times
   Loop $number_of_ronchi_iter j
      CallScript 8 $j
   EndLoop
   SetFrameBaseName 1 1 0 $base0
endif
# End Optical Modification

CallScript 14    #save extra meta in mdoc
R
if $with_laser > 0
   # reset ronchi measurement count for keys used
   CallScript 3 $number_of_ronchi_iter
endif

#ReportXLensDeflector 2
#Echo ......AFTER XT $ReportedValue1 $ReportedValue2
SetXLensDeflector 2 $xt0_x $xt0_y
SetDefocus $df0
ReportXLensDeflector 2
Echo ......Reset XT $ReportedValue1 $ReportedValue2

Echo ******Done Script****
EndMacro
Macro	13
#!Python
#ScriptName add meta to mdoc

import serialem as sem
for k,v in (
        ('ImageDistanceOffset', sem.ReportImageDistanceOffset()),
    ):
    v_str = '%.12f' % (float(v))
    sem.AddToNextFrameStackMdoc(k, v_str)

for k,v in (
        ('BeamTilt', sem.ReportBeamTilt()),
        ('ObjectiveStig',sem.ReportObjectiveStigmator()),
        ('XTilt', sem.ReportXLensDeflector(2)),):
    print(k,v)
    v_str = '%.6f        %.6f' % (float(v[0]), float(v[1]))
    sem.AddToNextFrameStackMdoc(k, v_str)
EndMacro
Macro	14
MacroName Script15 Running Ron-IP iSerialem native SPA stage-shift workflow
#run Ron-IP 3x
   Loop $number_of_ronchi_iter j
      CallScript 8 $j
   EndLoop
#record image, since this is replacing the serialEM acquisition routine
R
   # reset ronchi measurement count for keys used
   CallScript 3 $number_of_ronchi_iter
EndMacro
Macro	15
#MacroName Script16 Cold FEG flashing with try catch and only if advised
# testing and run high T first if advised
IsFEGFlashingAdvised 1 is_hi_t_flash_advised
IsFEGFlashingAdvised 0 is_low_t_flash_advised
some_advised = 1
IF $is_hi_t_flash_advised > 0
   NextFEGFlashHighTemp 1

ELSEIF $is_low_t_flash_advised > 0
   NextFEGFlashHighTemp 0
ELSE
   some_advised = 0
ENDIF
IF $some_advised > 0
   TRY
      LongOperation FF 0
   CATCH
      Echo caught error in flashing
      CallScript 17 240
   ENDTRY
ENDIF
EndMacro
Macro	16
#!Python
#ScriptName Sleeping
sleep_time = max(1,float(SEMargStrings[0]))

import time
import serialem as sem
sem.Echo('waiting for %.1f seconds ....' % sleep_time)
time.sleep(sleep_time)
sem.Echo('done waiting for %.1f seconds ....' % sleep_time)
EndMacro
Macro	17
#!Python
# ScriptName Script18 Save xt0 and other origin values in laser_def.json.json in current working directory

import json
import os
import serialem as sem

filepath = 'laser_def.json'
sem.Echo('--------Saving optical values to %s' % os.path.join(os.getcwd(), filepath))

def float_tuple(input_str_tuple):
   return (float(input_str_tuple[0]), float(input_str_tuple[1]))

def get_values():
   image_shift = sem.ReportImageShift()
   beam_tilt = sem.ReportBeamTilt()
   x_tilt = sem.ReportXLensDeflector(2)
   obj_stig = sem.ReportObjectiveStigmator()
   abs_focus = sem.ReportAbsoluteFocus()
   defocus = sem.ReportDefocus()
   c3_offset = sem.ReportImageDistanceOffset()
   return {'image_shift':float_tuple(image_shift),
         'beam_tilt':float_tuple(beam_tilt),
         'x_tilt':float_tuple(x_tilt),
         'obj_stig':float_tuple(obj_stig),
         'abs_focus':float(abs_focus),
         'defocus':float(defocus),
         'c3_offset':float(c3_offset),
   }

def main():
   data = get_values()
   with open(filepath, "w") as f:
      json.dump(data, f, indent=2)
   sem.Echo('Value saved')

if __name__ == '__main__':
   main()
EndMacro
Macro	18
#!Python
# ScriptName Script19 Recall xt0 and defocus from Laser part from laser_def.json
#This should be run after tilt series is concluded to reset xt - relies on laser_def.json being in the current working directory

import json
import os
import serialem as sem

filepath = 'laser_def.json'
sem.Echo('-------- Loading optical values from %s' % os.path.join(os.getcwd(), filepath))

with open(filepath, "r") as f:
   data = json.load(f)

sem.SetBeamTilt(data['beam_tilt'][0],data['beam_tilt'][1])
sem.SetXLensDeflector(2, data['x_tilt'][0],data['x_tilt'][1])
sem.SetObjectiveStigmator(data['obj_stig'][0],data['obj_stig'][1])
#sem.SetDefocus(data['defocus'])
sem.SetImageDistanceOffset(data['c3_offset'])

sem.Echo('XT and defocus value reset')
EndMacro
Macro	19
MacroName changecolor
Loop 177 i
idx = $i + 514
#ReportNavItem $ind
echo $idx
ChangeItemColor  $idx 4

EndLoop 
EndMacro
Macro	20
#!Python
#ScriptName Script21 quick_ronchi_magic_phase_measurment with SEARCH preset
# Purpose:       Measure best ronchigram phase offset and standing wave periodicity correction scale.
#                       Must be measured at C3 parallel illumination offset micromap step size 5 and two clicks down from on-plane
# Author:        Josh Dickerson, Eric Cooper
# Additional Documentation: Anchi Cheng
# ===================================================================
#be step size 5 and two clicks down from on-plane ( = 0.0020 logical unit in TFS micromap)
print("=== Collecting Ronchigram ===")

import sys
import numpy as np
import serialem as sem
import matplotlib.pyplot as pltA
import matplotlib.colors as colors

c3offset = 0
pixel_size = 0.98e-4 * 2 #um
binning = 32

target_phase_A= 1.40851107   # Vertical Laser
target_phase_B = -1.25431823  # Horizontal Laser
  

c3_correction_factor = 20/5.6
#correct_ks = np.array([[5.722, -0.389] ,  [0.623, 5.878]])
correct_ks = np.array([[5.527,-0.389] ,  [0.584, 5.177]])

def plot_complex_image(Fourier):
    # 1. Amplitude and Phase calculation
    amplitude = np.abs(Fourier) / np.max(np.abs(Fourier))  # Normalize to [0, 1]
    phase = np.angle(Fourier)

    # 2. Map Phase to Hue and Amplitude to Brightness
    h = (phase + np.pi) / (2 * np.pi)
    s = np.ones_like(amplitude) 
    v = amplitude              

    # 3. Convert HSV to RGB
    hsv_image = np.dstack((h, s, v))
    rgb_image = colors.hsv_to_rgb(hsv_image)

    # 4. Plot the image
    plt.imshow(rgb_image)

    # Display the plot
    plt.show()

def bin_image(image, binning = 32):
  bins = [image[i:(image.shape[0]//binning * binning):binning,j:(image.shape[1]//binning * binning):binning] for i in range(binning) for j in range(binning)]
  binned = np.sum(bins,axis=0)
  return binned

def find_fourier(binned, size = 4096):
  s = np.array([size,size])
  fourier = np.fft.fftshift(np.fft.fft2(binned - np.mean(binned),s))
  return fourier

def find_fourier_centered(image, padded_size = 4096):
    """
    Computes Fourier Transform and reports phases as if they were centered on the image center, rather than the top left corner. This is done by applying a correction phase to the Fourier Transform.
    """
    Fourier = np.fft.fftshift(np.fft.fft2(image-np.mean(image), s=(padded_size, padded_size)))
    center = np.array(image.shape) / 2 
    grid_y, grid_x = np.indices((padded_size, padded_size), dtype=float)

    shifted_y = grid_y-padded_size/2
    shifted_x = grid_x-padded_size/2

    correction_phase_x = np.exp(2j * np.pi * shifted_x/padded_size * center[1])
    correction_phase_y = np.exp(2j * np.pi * shifted_y/padded_size * center[0])
    correction_phase = correction_phase_x * correction_phase_y
    Fourier_corrected = Fourier * correction_phase
    return Fourier_corrected

def find_peaks(fourier, radius = 100, npeaks = 4, verbose = False):
  fourier_abs = np.abs(fourier).copy() # Work on a copy to avoid modifying the original
  peak_locations = []
  phases = []

  size = np.shape(fourier_abs)[0]
  #delete center
  peak_coords = [size//2, size//2]
  fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

  for i in range(npeaks):
      # Find the index of the maximum value in the flattened array
      max_idx = np.argmax(fourier_abs)

      # Convert the flattened index to 2D coordinates
      # np.shape(fourier_abs) gives (rows, cols)
      peak_coords = np.unravel_index(max_idx, fourier_abs.shape)

      # Store the coordinates
      peak_locations.append(peak_coords)

      # Set the found peak and region surrounding to zero to prevent re-selection in the next iteration
      fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

      phase = np.angle(fourier[peak_coords])
      phases.append(phase)

  peak_locations_centered = np.array(peak_locations)-size/2

  if verbose:
    print(f"Coordinates of the {npeaks} highest peaks:")
    for i, coords in enumerate(peak_locations):
        print(f"Peak {i+1}: {coords}")

  return peak_locations_centered, np.array(phases)

def find_ks_phases(CorrectedFourier, pixel_size_um, npeaks = 2, radius = 100):
  peaks, phases = find_peaks(CorrectedFourier, radius = radius, npeaks = npeaks*2) # We'll filter out the duplicates
  angles = report_angles(peaks, start_angle=-135)
  ordering = np.argsort(angles)
  peaks = peaks[ordering]
  phases = phases[ordering]
  phases = phases[:npeaks]
  peaks = peaks[:npeaks]
  ks = convert_to_k(peaks, binning = 1, fourier_size = CorrectedFourier.shape[0], pixel_size_um = pixel_size_um)
  return ks, phases

def convert_to_k(peak_locations, binning = 1, fourier_size = 4096, pixel_size_um = 2.7/1e4):
  ks = peak_locations / fourier_size * 1/(pixel_size_um * binning)
  return ks

def report_angles(ks, start_angle = -135):
  angles = np.mod(np.arctan2(-ks[:,0],ks[:,1])*180/np.pi-start_angle,360)+start_angle
  return angles

def sort_ks(ks,start_angle = -135):
  angles = report_angles(ks, start_angle)
  ks_sorted = ks[np.argsort(angles)]
  return ks_sorted

def convert_to_plane_offset(ks, focal_length = 7):
  offset = ks / (2/1064e-3) * focal_length # ks are in um^-1
  return offset


xtX, xtY = sem.ReportXLensDeflector(2)

start_offset = sem.ReportImageDistanceOffset()
new_offset = start_offset + c3offset
print(new_offset)

sem.SetImageDistanceOffset(new_offset)
base = sem.ReportFrameBaseName()
if not base[1].endswith('_ronchi'):
    sem.SetFrameBaseName(0, 1, 0,  base[1] + "_ronchi")
sem.Delay(2, "s")
#sem.Preview()
sem.Search()
#sem.T()
# reset after taking trial image
sem.SetFrameBaseName(0, 1, 0,  base[1])
sem.SetImageDistanceOffset(start_offset)

imageA = np.asarray(sem.bufferImage("A"))
print(imageA.shape)
binnedImage = bin_image(imageA, binning = binning)
imageFFT = find_fourier_centered(binnedImage)
ks, phases = find_ks_phases(imageFFT, pixel_size * binning)
sem.Echo("A")
sem.Echo("Measured Fringe Spacing")
sem.Echo(np.array2string(ks, formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured - Reference")
ks_err = ks-correct_ks
sem.Echo(np.array2string(ks_err,  formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured Phase")
sem.Echo(np.array2string(phases))

phase_err_A = np.mod(phases[0] - target_phase_A + np.pi, 2*np.pi) - np.pi
phase_err_B = np.mod(phases[1] - target_phase_B + np.pi, 2*np.pi) - np.pi

sem.Echo(f"Phase Correction V = {phase_err_A:.2f} rad, H = {phase_err_B:.2f} rad")

correction_x = 1e-5 * (phase_err_A * 0.212 + phase_err_B * 1.28)
correction_y = 1e-5 * (phase_err_A * 1.22 + phase_err_B * -0.243)

avg_err = (ks_err[0,0] + ks_err[1,1])/2
c3_correction = avg_err * c3_correction_factor

sem.Echo(f"C3 recommend correction: {c3_correction:.1f}")

sem.Echo(f"X tilt correction X = {correction_x:.3e}, Y ={correction_y:.3e}")
EndMacro
Macro	21
#!Python
#ScriptName Script22 quick_ronchi_correction using SEARCH preset
# Purpose:      Correct to on-node on-plane for xLPP based on ronchigram phase offset and standing wave periodicity
#                       Starting condition should be close to on-plane and within +/- half of standing wave periodicity
#                       Hijack SEARCH preset to be used for this purpose - has to have no IS or defocus ofsetts
# Author:        Josh Dickerson, Eric Cooper
# Additional Documentation: Anchi Cheng
# Minor edits: Misha Kopylov
# ===================================================================

print("=== Collecting Ronchigram ===")

import sys
import numpy as np
import serialem as sem
import matplotlib.pyplot as plt
import matplotlib.colors as colors

c3offset = -20
pixel_size = 0.98e-4 * 2 #um
binning = 32

# target_phase measured in ronchi_measurement
target_phase_A=1.25748    # Vertical Laser
target_phase_B =  1.38547  # Horizontal Laser

# target_ks 2D matrix measured in ronchi_measure
correct_ks = np.array([[5.683, -0.350],   [0.662, 5.411]])


avg_norm = (np.linalg.norm(correct_ks[0]) + np.linalg.norm(correct_ks[1]))/2.0
c3_correction_factor = 20 /avg_norm

def plot_complex_image(Fourier):
    # 1. Amplitude and Phase calculation
    amplitude = np.abs(Fourier) / np.max(np.abs(Fourier))  # Normalize to [0, 1]
    phase = np.angle(Fourier)

    # 2. Map Phase to Hue and Amplitude to Brightness
    h = (phase + np.pi) / (2 * np.pi)
    s = np.ones_like(amplitude) 
    v = amplitude              

    # 3. Convert HSV to RGB
    hsv_image = np.dstack((h, s, v))
    rgb_image = colors.hsv_to_rgb(hsv_image)

    # 4. Plot the image
    plt.imshow(rgb_image)

    # Display the plot
    plt.show()

def bin_image(image, binning = 32):
  bins = [image[i:(image.shape[0]//binning * binning):binning,j:(image.shape[1]//binning * binning):binning] for i in range(binning) for j in range(binning)]
  binned = np.sum(bins,axis=0)
  return binned

def find_fourier(binned, size = 4096):
  s = np.array([size,size])
  fourier = np.fft.fftshift(np.fft.fft2(binned - np.mean(binned),s))
  return fourier

def find_fourier_centered(image, padded_size = 4096):
    """
    Computes Fourier Transform and reports phases as if they were centered on the image center, rather than the top left corner. This is done by applying a correction phase to the Fourier Transform.
    """
    Fourier = np.fft.fftshift(np.fft.fft2(image-np.mean(image), s=(padded_size, padded_size)))
    center = np.array(image.shape) / 2 
    grid_y, grid_x = np.indices((padded_size, padded_size), dtype=float)

    shifted_y = grid_y-padded_size/2
    shifted_x = grid_x-padded_size/2

    correction_phase_x = np.exp(2j * np.pi * shifted_x/padded_size * center[1])
    correction_phase_y = np.exp(2j * np.pi * shifted_y/padded_size * center[0])
    correction_phase = correction_phase_x * correction_phase_y
    Fourier_corrected = Fourier * correction_phase
    return Fourier_corrected

def find_peaks(fourier, radius = 100, npeaks = 4, verbose = False):
  fourier_abs = np.abs(fourier).copy() # Work on a copy to avoid modifying the original
  peak_locations = []
  phases = []

  size = np.shape(fourier_abs)[0]
  #delete center
  peak_coords = [size//2, size//2]
  fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

  for i in range(npeaks):
      # Find the index of the maximum value in the flattened array
      max_idx = np.argmax(fourier_abs)

      # Convert the flattened index to 2D coordinates
      # np.shape(fourier_abs) gives (rows, cols)
      peak_coords = np.unravel_index(max_idx, fourier_abs.shape)

      # Store the coordinates
      peak_locations.append(peak_coords)

      # Set the found peak and region surrounding to zero to prevent re-selection in the next iteration
      fourier_abs[(peak_coords[0]-radius):(peak_coords[0]+radius),(peak_coords[1]-radius):(peak_coords[1]+radius),] = 0

      phase = np.angle(fourier[peak_coords])
      phases.append(phase)

  peak_locations_centered = np.array(peak_locations)-size/2

  if verbose:
    print(f"Coordinates of the {npeaks} highest peaks:")
    for i, coords in enumerate(peak_locations):
        print(f"Peak {i+1}: {coords}")

  return peak_locations_centered, np.array(phases)

def find_ks_phases(CorrectedFourier, pixel_size_um, npeaks = 2, radius = 100):
  peaks, phases = find_peaks(CorrectedFourier, radius = radius, npeaks = npeaks*2) # We'll filter out the duplicates
  angles = report_angles(peaks, start_angle=-135)
  ordering = np.argsort(angles)
  peaks = peaks[ordering]
  phases = phases[ordering]
  phases = phases[:npeaks]
  peaks = peaks[:npeaks]
  ks = convert_to_k(peaks, binning = 1, fourier_size = CorrectedFourier.shape[0], pixel_size_um = pixel_size_um)
  return ks, phases

def convert_to_k(peak_locations, binning = 1, fourier_size = 4096, pixel_size_um = 2.7/1e4):
  ks = peak_locations / fourier_size * 1/(pixel_size_um * binning)
  return ks

def report_angles(ks, start_angle = -135):
  angles = np.mod(np.arctan2(-ks[:,0],ks[:,1])*180/np.pi-start_angle,360)+start_angle
  return angles

def sort_ks(ks,start_angle = -135):
  angles = report_angles(ks, start_angle)
  ks_sorted = ks[np.argsort(angles)]
  return ks_sorted

def convert_to_plane_offset(ks, focal_length = 7):
  offset = ks / (2/1064e-3) * focal_length # ks are in um^-1
  return offset


xtX, xtY = sem.ReportXLensDeflector(2)

start_offset = sem.ReportImageDistanceOffset()
new_offset = start_offset + c3offset
print(new_offset)

sem.SetImageDistanceOffset(new_offset)
base = sem.ReportFrameBaseName()
sem.SetFrameBaseName(0, 1, 0,  base[1])
sem.Delay(2, "s")
base = sem.ReportFrameBaseName()
if not base[1].endswith('_ronchi'):
    sem.SetFrameBaseName(0, 1, 0,  base[1] + "_ronchi")
sem.Search()
sem.Echo('*****acquire with Preview*****')
#sem.Preview()
sem.SetImageDistanceOffset(start_offset)
sem.SetFrameBaseName(1, 1, 0,  base[1])

imageA = np.asarray(sem.bufferImage("A"))
print(imageA.shape)
binnedImage = bin_image(imageA, binning = binning)
imageFFT = find_fourier_centered(binnedImage)
ks, phases = find_ks_phases(imageFFT, pixel_size * binning)
sem.Echo("A")
sem.Echo("Measured Fringe Spacing")
sem.Echo(np.array2string(ks, formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured - Reference")
ks_err = ks-correct_ks
sem.Echo(np.array2string(ks_err,  formatter = {'float_kind':lambda x: "%.3f" % x}))
sem.Echo("Measured Phase")
sem.Echo(np.array2string(phases))

phase_err_A = np.mod(phases[0] - target_phase_A + np.pi, 2*np.pi) - np.pi
phase_err_B = np.mod(phases[1] - target_phase_B + np.pi, 2*np.pi) - np.pi

sem.Echo(f"Phase Correction V = {phase_err_A:.2f} rad, H = {phase_err_B:.2f} rad")

correction_x = 1e-5 * (phase_err_A * 0.212 + phase_err_B * 1.28)
correction_y = 1e-5 * (phase_err_A * 1.22 + phase_err_B * -0.243)

avg_err = (ks_err[0,0] + ks_err[1,1])/2
c3_correction = avg_err * c3_correction_factor

sem.Echo(f"C3 recommend correction: {c3_correction:.1f}")

sem.Echo(f"X tilt correction X = {correction_x:.3e}, Y ={correction_y:.3e}")

c3offsetYN = 1 # sem.YesNoBox("Do You Want to Correct C3 offset?")

if c3offsetYN:
  sem.SetImageDistanceOffset(start_offset + c3_correction)
  sem.Echo(f"c3 offest adjused by {c3_correction}")

correctYN = 1 # sem.YesNoBox("Do You Want to Correct Phase?")

if correctYN:
   sem.SetXLensDeflector(2, xtX + correction_x, xtY + correction_y)
   print("Phase Shift Corrected")
EndMacro
Macro	22
MacroName Script23 Running LAFIS+rip in Serialem native TS acquisition workflow

# 1. Activate and set script in gui tree: /SerialEM/Navigator/Nav. Options./Run Script in Multi-shot
# 1.1 Or for Tilt series:  /SerialEM/Tilt Series/Run Script in TS and set script to run and (4) for right before record
# 1.2 Fixed Problem: TRIAL is used for tilt series "tracking image" for XY correction. Use SEARCH for R-I-P
# 1.3 Remove R by the end of the script since TS acqusition will take record on its own
# 1.4. Fix deflector reset to happen at the beginning of the script

# 2. Set multi-shot pattern to use
# 2.1 Or for Tilt series choose targets and setup focusing areas. Trial for now is set to be over the record for testing

# 3. Select items to acquire
######Settings#####
with_laser = 1
######End Settings######

Echo ******Running Script 23****
ReportDirectory
ReportFrameBaseName
base0 = $ReportedValue2

ReportImageShift is0
ReportBeamTilt bt0
ReportDefocus df0
Echo ........is $is0
ReportXLensDeflector 2
xt0_x = $ReportedValue1
xt0_y = $ReportedValue2
#Echo ......BEFORE XT $xt0_x $xt0_y
CallScript 19

# Optical Modification Part
#L- part of LAFIS and defocus correction. Note: normal AFIS is already applied through the workflow calling this.
AdjustBeamTiltforIS
CallScript 4
#End LAFIS
if $with_laser > 0
   #Call R-I-P that uses Search instead of Trial for taking a ronchigram
   CallScript 22
   CallScript 22
   CallScript 22
   CallScript 22
   CallScript 22
   SetFrameBaseName 1 1 0 $base0
endif
# End Optical Modification

CallScript 14    #tell sem to save extra meta in mdoc for the next acquired image
#R removed record here, since TS routine will do record on its own

#This should be moved to happen after record - replaced with scripts 18 and 19
#ReportXLensDeflector 2
#Echo ......AFTER XT $ReportedValue1 $ReportedValue2
#SetXLensDeflector 2 $xt0_x $xt0_y
#SetDefocus $df0
#ReportXLensDeflector 2
#Echo ......Reset XT $ReportedValue1 $ReportedValue2

Echo ******Done Script****
EndMacro
Macro	23
MacroName test meta saving

ReportXLensDeflector 2
xt0_x = $ReportedValue1
xt0_y = $ReportedValue2
Echo ......Original XT $xt0_x $xt0_y
CallScript 14    #save extra meta in mdoc
R
xt_delta = 0.001
Loop 3 i
   ReportXLensDeflector 2
   xt1_x = $ReportedValue1 + $i * $xt_delta
   xt1_y = $ReportedValue2
   SetXLensDeflector 2 $xt1_x $xt1_y
   Echo ....BEFORE XT $xt1_x $xt1_y
   CallScript 14    #save extra meta in mdoc
   R
   Echo ***AFTER $i ***
   ReportXLensDeflector 2
   xt2_x = $ReportedValue1
   xt2_y = $ReportedValue2
   Echo ......AFTER XT $xt2_x $xt2_y
EndLoop
SetXLensDeflector 2 $xt0_x $xt0_y
EndMacro
Macro	24
#!Python
#ScriptName afis testing
import serialem as sem
import numpy as np

sem.SetImageShift(5,0)
sem.T()
sem.AdjustBeamTiltforIS()
sem.T()
EndMacro
Macro	25
ScriptName DefocusSeries

base = lppons4
step = 0.1
nimg = 31
number_of_ronchi_iter = 3

ReportDefocus
startDef = $reportedValue1

Loop $nimg i
   idx = $i + 100
   OpenNewFile $base-$idx.mrc
   Loop $number_of_ronchi_iter j
      CallScript 8 $j
   EndLoop
   Record
   # reset ronchi measurement count for keys used
   CallScript 3 $number_of_ronchi_iter
   SetXLensDeflector 2 -0.000944 -0.000011
   Save
   CloseFile
   ChangeFocus $step
EndLoop

SetDefocus $startDef
Echo Series $base done - $nimg images, defocus restored to $startDef
EndMacro
Macro	26
ScriptName Color Group 1 Blue

SuspendNavRedraw

ChangeItemColor 70 2
ChangeItemColor 36 2
ChangeItemColor 53 2
ChangeItemColor 67 2
ChangeItemColor 89 2
ChangeItemColor 59 2
ChangeItemColor 66 2
ChangeItemColor 44 2
ChangeItemColor 84 2
ChangeItemColor 90 2
ChangeItemColor 38 2
ChangeItemColor 40 2
ChangeItemColor 86 2
ChangeItemColor 49 2
ChangeItemColor 81 2
ChangeItemColor 64 2
ChangeItemColor 33 2
ChangeItemColor 42 2
ChangeItemColor 88 2
ChangeItemColor 96 2
ChangeItemColor 78 2
ChangeItemColor 57 2
ChangeItemColor 61 2
ChangeItemColor 62 2
ChangeItemColor 63 2
ChangeItemColor 82 2
ChangeItemColor 93 2
ChangeItemColor 54 2
ChangeItemColor 35 2
ChangeItemColor 79 2
ChangeItemColor 37 2
ChangeItemColor 52 2
ChangeItemColor 45 2

SuspendNavRedraw 0
Echo Changed 33 Navigator items to blue
EndMacro
Macro	27
ScriptName Make Off Items Magenta and Drawn

# Change every Off Navigator item to magenta and enable drawing
SuspendNavRedraw

ChangeItemColor 32 4
ChangeItemDraw 32 1
ChangeItemColor 34 4
ChangeItemDraw 34 1
ChangeItemColor 39 4
ChangeItemDraw 39 1
ChangeItemColor 41 4
ChangeItemDraw 41 1
ChangeItemColor 43 4
ChangeItemDraw 43 1
ChangeItemColor 47 4
ChangeItemDraw 47 1
ChangeItemColor 48 4
ChangeItemDraw 48 1
ChangeItemColor 50 4
ChangeItemDraw 50 1
ChangeItemColor 51 4
ChangeItemDraw 51 1
ChangeItemColor 55 4
ChangeItemDraw 55 1
ChangeItemColor 56 4
ChangeItemDraw 56 1
ChangeItemColor 58 4
ChangeItemDraw 58 1
ChangeItemColor 60 4
ChangeItemDraw 60 1
ChangeItemColor 65 4
ChangeItemDraw 65 1
ChangeItemColor 68 4
ChangeItemDraw 68 1
ChangeItemColor 69 4
ChangeItemDraw 69 1
ChangeItemColor 71 4
ChangeItemDraw 71 1
ChangeItemColor 73 4
ChangeItemDraw 73 1
ChangeItemColor 74 4
ChangeItemDraw 74 1
ChangeItemColor 75 4
ChangeItemDraw 75 1
ChangeItemColor 76 4
ChangeItemDraw 76 1
ChangeItemColor 77 4
ChangeItemDraw 77 1
ChangeItemColor 80 4
ChangeItemDraw 80 1
ChangeItemColor 82 4
ChangeItemDraw 82 1
ChangeItemColor 83 4
ChangeItemDraw 83 1
ChangeItemColor 84 4
ChangeItemDraw 84 1
ChangeItemColor 85 4
ChangeItemDraw 85 1
ChangeItemColor 87 4
ChangeItemDraw 87 1
ChangeItemColor 91 4
ChangeItemDraw 91 1
ChangeItemColor 92 4
ChangeItemDraw 92 1
ChangeItemColor 94 4
ChangeItemDraw 94 1
ChangeItemColor 95 4
ChangeItemDraw 95 1

SuspendNavRedraw 0
Echo Changed 32 Off Navigator items to magenta and enabled drawing
EndMacro
Macro	28
#!Python
# ===================================================================
#ScriptName     PACEtomo_targetsFromMontage
# Author:       Fabian Eisenstein
# Created:      2022/12/09
# Revision:     v1.9
# Last Change:  2026/01/31: added onlyView mode to skip generation of Preview maps
#               2024/05/14: added warning for items not on map, added proper check for camera type

# Take a montage of your target area. 
# Select targets using the navigator with "Add Points" (points have to be part of the same group).
# Drag the tracking target position to the top of the group.
# Select one of the points and run the script.
# (Make sure drawing of points is not disabled in Navigator.)
# You can run the script in the DUMMY version. Just ignore the error messages. It does need a "template" map for Record and View mode in that case. These should have the Navigator Notes "Template Preview" and "Template View", respectively.
# You can also run the script using Acquire at Items. Just check "Skip stage move to item if possible" in the Task-related options (Acquire at Items window).

##### SETTINGS #####

onlyView = False    # set to True to only create View maps and not Preview maps and targets file
noUI    = False     # set to True to avoid folder/name selection (e.g. to run the script in a Acquire at Items routine), it will use the label of the montage as name template
prefix  = "pos"     # prefix for name when running noUI

### END SETTINGS ###

import serialem as sem
import os
import copy
import numpy as np
import matplotlib.pyplot as plt
import matplotlib.image as mpimg
import mrcfile
from skimage.transform import resize

### FUNCTIONS ###

def WriteTargets(targetFile, targets, savedRun=False, resume={"sec": 0, "pos": 0}, settings={}):
    output = ""
    if settings != {}:
        for key, val in settings.items():
            if val != "":
                output += "_set " + key + " = " + str(val) + "\n"
        output += "\n"
    if resume["sec"] > 0 or resume["pos"] > 0:
        output += "_spos = " + str(resume["sec"]) + "," + str(resume["pos"]) + "\n" * 2
    for pos in range(len(targets)):
        output += "_tgt = " + str(pos + 1).zfill(3) + "\n"
        for key in targets[pos].keys():
            output += key + " = " + str(targets[pos][key]) + "\n"
        if savedRun:
            output += "_pbr" + "\n"
            for key in savedRun[pos][0].keys():
                output += key + " = " + str(savedRun[pos][0][key]) + "\n"
            output += "_nbr" + "\n"
            for key in savedRun[pos][1].keys():
                output += key + " = " + str(savedRun[pos][1][key]) + "\n"
        output += "\n"
    with open(targetFile, "w") as f:
        f.write(output)

def WriteMrc(outfilename, image, pixSize):
    with mrcfile.new(os.path.join(curDir, outfilename), overwrite=True) as mrc:
        mrc.set_data(image)
        mrc.voxel_size = (pixSize, pixSize, pixSize)
        mrc.update_header_from_data()
        mrc.update_header_stats()

def ParseNav(navFile):
    with open(navFile) as f:
        navContent = f.readlines()
    header = []
    items = []
    newItem = {}
    index = 0

    for line in navContent:
        col = line.rstrip().split(" ")
        if col[0] == "": 
            if "Item" in newItem.keys():
                items.append(newItem)
                newItem = {}
                continue
            else:
                continue
        if line.startswith("[Item"):
            index += 1
            newItem = {"index": index, "Item": col[2].strip("]")}
        elif "Item" in newItem.keys():
            newItem[col[0]] = [val for val in col[2:]]
        else:
            header.append(line)
    if "Item" in newItem.keys():    #append last target
        items.append(newItem)
    return header, items

def WriteNav(header, items, filename):
    text = ""
    for line in header:
        text += line
    text += os.linesep
    for item in items:
        text += "[Item = " + item["Item"] + "]" + os.linesep
        item.pop("Item")
        item.pop("index")
        for key, attr in item.items():
            text += key + " = "
            for val in attr:
                text += str(val) + " "
            text += os.linesep
        text += os.linesep
    with open(filename, "w", newline="") as f:
        f.write(text)
    return

def CropImage(image, coords, fov):
    imageCrop = image[max(0, int(coords[0] - fov[0] / 2)):min(image.shape[0], int(coords[0] + fov[0] / 2)), max(0, int(coords[1] - fov[1] / 2)):min(image.shape[1], int(coords[1] + fov[1] / 2))]
    if imageCrop.shape != fov:
        mean = np.mean(imageCrop)
        if imageCrop.shape[0] < fov[0]:
            padding = np.full((int(fov[0] - imageCrop.shape[0]), imageCrop.shape[1]), mean)
            if int(coords[0] - fov[0] / 2) < 0:
                imageCrop = np.concatenate((padding, imageCrop), axis=0)
            if int(coords[0] + fov[0] / 2) > image.shape[0]:
                imageCrop = np.concatenate((imageCrop, padding), axis=0)
        if imageCrop.shape[1] < fov[1]:
            padding = np.full((imageCrop.shape[0], int(fov[1] - imageCrop.shape[1])), mean)
            if int(coords[1] - fov[1] / 2) < 0:
                imageCrop = np.concatenate((padding, imageCrop), axis=1)
            if int(coords[1] + fov[1] / 2) > image.shape[1]:
                imageCrop = np.concatenate((imageCrop, padding), axis=1)
        sem.Echo("WARNING: Target position is close to the edge of the map and was padded.")
    return imageCrop

### END FUNCTIONS ###

s2ssMatrix = None
dummy = False
if sem.ReportProperty("DummyInstance") == 1:
    if not onlyView:
        sem.Echo("WARNING: You are using SerialEM in DUMMY mode. Make sure a View image and Preview image template are available in the Navigator!")
    else:
        sem.Echo("WARNING: You are using SerialEM in DUMMY mode. Make sure a View image template is available in the Navigator!")
    dummy = True

if onlyView:
    sem.Echo("NOTE: Running in View-only mode: Only View maps will be created. Please change the setting in the script if you want to create Preview maps as well.")

# Get nav item info

navID = int(sem.ReportNavItem()[0])
groupInfo = sem.ReportGroupStatus()
groupID = int(groupInfo[1])
drawnID = int(sem.NavIndexItemDrawnOn(navID))

if drawnID == 0:
    if sem.ReportIfNavAcquiring()[0]:
        sem.SkipAcquiringNavItem()
        sem.EndAcquireAtItems()     # only available from 12-May-23
        sem.Echo("NOTE: This nav item is not a point on a map and will be ignored.")
        sem.Exit()
    else:
        sem.Echo("ERROR: This nav item is not a point on a map. Make sure to save an image as a map prior to adding points!")
        sem.Exit()

# Get user input

if not noUI:
    sem.UserSetDirectory("Please choose a directory for saving targets and tilt series!")

    sem.EnterString("userName","Please provide a rootname for the PACE-tomo collection area!")
    userName = sem.GetVariable("userName")
else:
    sem.ReportOtherItem(drawnID)
    navLabel = sem.GetVariable("navLabel")
    userName = prefix + navLabel.strip().replace(" ", "_")

curDir = sem.ReportDirectory()
tgtsFilePath = os.path.join(curDir, userName + "_tgts.txt")

# Make sure tgts file is unique
counter = 1
while os.path.exists(tgtsFilePath):
    counter += 1
    tgtsFilePath = os.path.join(curDir, userName + str(counter) + "_tgts.txt") 
if counter > 1:
    userName = userName + str(counter)

# Make sure nav contains template images

prevID = int(sem.NavIndexWithNote("Template Preview"))
viewID = int(sem.NavIndexWithNote("Template View"))
if (prevID == 0 and not onlyView) or viewID == 0:
    if not dummy:
        sem.SetColumnOrGunValve(0)
        sem.AllowFileOverwrite(1)
        if prevID == 0 and not onlyView:
            sem.OpenNewFile("template_preview.mrc")
            sem.L()
            sem.S()
            prevID = int(sem.NewMap(0, "Template Preview"))
            sem.ChangeItemLabel(prevID, "TP")
            sem.CloseFile()
            if s2ssMatrix is None:
                s2ssMatrix = np.array(sem.StageToSpecimenMatrix(0)).reshape((2, 2))
        if viewID == 0:
            sem.OpenNewFile("template_view.mrc")
            sem.V()
            sem.S()
            viewID = int(sem.NewMap(0, "Template View"))
            sem.ChangeItemLabel(viewID, "TV")
            sem.CloseFile()
        sem.SetColumnOrGunValve(1)
        sem.AllowFileOverwrite(0)
    else:
        sem.OKBox("ERROR: Template for View or Preview image was not found!")
        sem.Echo("ERROR: Template for View or Preview image was not found!")
        sem.Echo("If you have a View and Preview image in the Navigator that you want to use as template, please change the Navigator Note to 'Template View' and 'Template Preview', respectively.")
        sem.Exit()

# Load templates to get pixel sizes

sem.LoadOtherMap(viewID, "A")
imgProp = sem.ImageProperties("A")
viewPixSize = imgProp[4] * 10 / imgProp[2]

if not onlyView:
    sem.LoadOtherMap(prevID, "A")
    imgProp = sem.ImageProperties("A")
    recordPixSize = imgProp[4] * 10 / imgProp[2]

    if recordPixSize == viewPixSize:
        sem.OKBox("ERROR: Template for View or Preview show the same pixel size! Make sure the maps could be loaded properly!")
        sem.Echo("ERROR: Template for View or Preview show the same pixel size! Make sure the maps could be loaded properly!")
        sem.Exit()

camX = imgProp[0] * imgProp[2]
camY = imgProp[1] * imgProp[2]

if sem.ReportCameraProperty(0, "K2Type") > 0:
    binFactor = 2           # gatan cameras need the extra binning factor because SR is bin 1 
else:
    binFactor = 1

# Make sure s2s matrix is defined

if not dummy and s2ssMatrix is None:
    sem.GoToLowDoseArea("R")
    s2ssMatrix = np.array(sem.StageToSpecimenMatrix(0)).reshape((2, 2))

# Load montage

sem.LoadOtherMap(drawnID, "A")

buffer, *_ = sem.ReportCurrentBuffer()

imgProp = sem.ImageProperties(buffer)
x = imgProp[0]
y = imgProp[1]
pixSize = imgProp[4] * 10

image = np.asarray(sem.bufferImage(buffer), dtype=float)

# Get point coords

sem.GetNavGroupStageCoords(groupID, "groupStageX", "groupStageY", "groupStageZ")
sem.GetNavGroupImageCoords(groupID, buffer, "groupImageX", "groupImageY")

groupStageX = np.array(sem.GetVariable("groupStageX").split(), dtype=float)
groupStageY = np.array(sem.GetVariable("groupStageY").split(), dtype=float)
stageZ = np.array(sem.GetVariable("groupStageZ").split(), dtype=float)[0]
groupImageX = np.array(sem.GetVariable("groupImageX").split(), dtype=float)
groupImageY = np.array(sem.GetVariable("groupImageY").split(), dtype=float)

# Calculate field of view

if not onlyView:
    fov_recX = int(camX * recordPixSize / pixSize)
    fov_recY = int(camY * recordPixSize / pixSize)

    out_bin_rec = min(8, int(pixSize / recordPixSize))  # binning factor of the created virtual map for Record mode (needs to be int)
    if out_bin_rec < 8:
        if out_bin_rec < 4:
            if out_bin_rec > 1:
                out_bin_rec = 2
        else:
            out_bin_rec = 4

    out_recX = int(camX / out_bin_rec)
    out_recY = int(camY / out_bin_rec)

fov_viewX = int(camX * viewPixSize / pixSize)
fov_viewY = int(camY * viewPixSize / pixSize)

out_bin_view = min(8, int(pixSize / viewPixSize))   # binning factor of the created virtual map for View mode (needs to be int)
if out_bin_view < 8:
    if out_bin_view < 4:
        if out_bin_view > 1:
            out_bin_view = 2
    else:
        out_bin_view = 4

out_viewX = int(camX / out_bin_view)
out_viewY = int(camY / out_bin_view)

# Crop out virt maps

tgtImages = []
targets = []
for i in range(groupStageX.size):
    sem.Echo("Creating virtual map of point " + str(i + 1) + "...")

    if not onlyView:
        imageCrop = CropImage(image, (groupImageY[i], groupImageX[i]), (fov_recY, fov_recX))
        imageProc = np.flip(resize(imageCrop, (out_recY, out_recX), preserve_range=True, anti_aliasing=True).astype(np.float32), axis=0)
        tgtImages.append(imageProc)
        WriteMrc(userName + "_tgt_" + str(i + 1).zfill(3) + ".mrc", tgtImages[i], recordPixSize * out_bin_rec)

    imageCrop = CropImage(image, (groupImageY[i], groupImageX[i]), (fov_viewY, fov_viewX))
    viewImageProc = np.flip(resize(imageCrop, (out_viewY, out_viewX), preserve_range=True, anti_aliasing=True).astype(np.float32), axis=0)
    WriteMrc(userName + "_tgt_" + str(i + 1).zfill(3) + "_view.mrc", viewImageProc, viewPixSize * out_bin_view)

    if not dummy:
        SSX, SSY = s2ssMatrix @ np.array([groupStageX[i] - groupStageX[0], groupStageY[i] - groupStageY[0]])
        if SSX > 15 or SSY > 15:
            sem.Echo("WARNING: Point " + str(i + 1) + " requires image shifts (" + str(round(SSX, 1)) + "|" + str(round(SSY, 1)) + ") beyond the default image shift limit (15)!")
        tgt_params = {"tsfile": userName + "_ts_" + str(i + 1).zfill(3) + ".mrc", 
                    "viewfile": userName + "_tgt_" + str(i + 1).zfill(3) + "_view.mrc", 
                    "SSX": SSX, 
                    "SSY": SSY, 
                    "stageX": groupStageX[i], 
                    "stageY": groupStageY[i], 
                    "skip": "False"}
    else:       # leave out SS coords and calculate from stage coords on the fly in PACEtomo.py
        tgt_params = {"tsfile": userName + "_ts_" + str(i + 1).zfill(3) + ".mrc", 
                    "viewfile": userName + "_tgt_" + str(i + 1).zfill(3) + "_view.mrc", 
                    "stageX": groupStageX[i], 
                    "stageY": groupStageY[i], 
                    "skip": "False"}
    if not onlyView:
        tgt_params["tgtfile"] = userName + "_tgt_" + str(i + 1).zfill(3) + ".mrc"
    targets.append(tgt_params)

# Load nav file

sem.SaveNavigator()
navFile = sem.ReportNavFile()
navHeader, navItems = ParseNav(navFile)

if not onlyView:
    templatePrev = copy.deepcopy(navItems[prevID - 1])
    templatePrev.pop("RawStageXY", None)
    templatePrev.pop("SamePosId", None)

templateView = copy.deepcopy(navItems[viewID - 1])
templateView.pop("RawStageXY", None)
templateView.pop("SamePosId", None)

# Determine image dimenstions for polygons

if not onlyView:
    ptsDX_rec = np.array(np.array(templatePrev["PtsX"], dtype=float) - float(templatePrev["StageXYZ"][0]))
    ptsDY_rec = np.array(np.array(templatePrev["PtsY"], dtype=float) - float(templatePrev["StageXYZ"][1]))
ptsDX_view = np.array(np.array(templateView["PtsX"], dtype=float) - float(templateView["StageXYZ"][0]))
ptsDY_view = np.array(np.array(templateView["PtsY"], dtype=float) - float(templateView["StageXYZ"][1]))

# Add maps

newNavIDs = []
for i, tgt in enumerate(targets):
    
    # Create view map first to get mapID
    viewItem = copy.deepcopy(templateView)
    viewItem["Item"] = "v" + str(i + 1).zfill(2)
    viewItem["StageXYZ"] = [tgt["stageX"], tgt["stageY"], stageZ]
    viewItem["PtsX"] = ptsDX_view + tgt["stageX"]
    viewItem["PtsY"] = ptsDY_view + tgt["stageY"]
    viewItem["MapFile"] = [os.path.join(curDir, tgt["viewfile"])]
    viewItem["Note"] = [tgt["viewfile"]]
    viewItem["MapBinning"] = [out_bin_view * binFactor]
    viewItem["MapMinMaxScale"] = [np.min(viewImageProc), np.max(viewImageProc)]

    # Create new map ID
    uniqueID = int(sem.GetUniqueNavID())
    while uniqueID in newNavIDs:
        uniqueID = int(sem.GetUniqueNavID())
    newNavIDs.append(uniqueID)

    newViewID = uniqueID

    viewItem["MapID"] = [newViewID]
    viewItem["RealignedID"] = [drawnID]
    viewItem["SamePosId"] = [newViewID]

    if not onlyView:
        # Create target map
        tgtItem = copy.deepcopy(templatePrev)
        tgtItem["Item"] = str(i + 1).zfill(3)
        tgtItem["StageXYZ"] = [tgt["stageX"], tgt["stageY"], stageZ]
        tgtItem["PtsX"] = ptsDX_rec + tgt["stageX"]
        tgtItem["PtsY"] = ptsDY_rec + tgt["stageY"]
        tgtItem["MapFile"] = [os.path.join(curDir, tgt["tgtfile"])]
        tgtItem["MapBinning"] = [out_bin_rec * binFactor]
        tgtItem["MapMinMaxScale"] = [np.min(tgtImages[i]), np.max(tgtImages[i])]

        # Create new map ID
        uniqueID = int(sem.GetUniqueNavID())
        while uniqueID in newNavIDs:
            uniqueID = int(sem.GetUniqueNavID())
        newNavIDs.append(uniqueID)

        tgtItem["MapID"] = [uniqueID]
        tgtItem["RealignedID"] = [drawnID]
        tgtItem["SamePosId"] = [newViewID]

        if i == 0:
            tgtItem["Note"] = [userName + "_tgts.txt"]
            tgtItem["Acquire"] = [1]
        else:
            tgtItem["Note"] = [tgt["tgtfile"]]
            tgtItem["Acquire"] = [0]

        navItems.append(tgtItem)
    else:
        if i == 0:
            viewItem["Note"] = [userName + "_tgts.txt"]
            viewItem["Acquire"] = [1]
        else:
            viewItem["Note"] = [tgt["viewfile"]]
            viewItem["Acquire"] = [0]

    navItems.append(viewItem)

# Write nav file

sem.SaveNavigator(navFile + "~")        # backup unaltered nav file
WriteNav(navHeader, navItems, navFile)
sem.ReadNavFile(navFile)

sem.Echo("Updated navigator file with target maps.")

# Write tgts file

WriteTargets(tgtsFilePath, targets)

sem.Echo("Target selection completed! " + str(len(targets)) + " targets were selected.")
EndMacro
Macro	30
#!Python
# ScriptName:  test mdoc saving
import serialem as sem

def saveRonchi(iter):
   k = f'RonchiMatrix{iter: 02d}'
   v = [1.0, 2.0,3.0,4.0]
   v_str = "1,0   2.0   3.0   4.0"
   sem.AddToNextFrameStackMdoc(k, v_str)

def testSave(my_iter):
   data_pattern = "test_%02d" % (my_iter)
   sem.SetFrameBaseName(1, 1, 0, data_pattern)
   saveRonchi(1)
   saveRonchi(2)
   sem.R()

testSave(1)
testSave(2)
EndMacro
Macro	31
#!Python
# ===================================================================
#ScriptName     PACEtomo_measureOffset
# Purpose:      Estimates tilt axis offset for PACEtomo. (Thanks to Wim Hagen for the suggestion!)
#               More information at http://github.com/eisfabian/PACEtomo
# Author:       Fabian Eisenstein
# Created:      2022/05/10
# Revision:     v1.9
# Last Change:  2026/08/23: fixed compatability issue with latest numpy
#               2024/05/10: forced "Center Shift on Tilt axis" (1.8)
# ===================================================================

############ SETTINGS ############ 

increment   = 6     # tilt step
maxTilt     =  48   # maximum +/- tilt angle
offset      = 5     # +/- offset for measured positions in microns from tilt axis (also accepts lists e.g. [2, 4, 6])

plot        = True  # plot measurements

########## END SETTINGS ########## 

import serialem as sem
import numpy as np
from scipy import optimize
import matplotlib.pyplot as plt

########### FUNCTIONS ###########

def dZ(alpha, y0):
    return y0 * np.tan(np.radians(-alpha))

def Tilt(tilt):
    sem.TiltTo(tilt)

    for i in range(len(offsets)):
        sem.ImageShiftByMicrons(0, offsets[i])
        sem.G(-1)
        defocus, *_ = sem.ReportAutoFocus()
        focus[i].append(float(defocus))
        sem.SetImageShift(0, 0)

    if tilt == 0:
        for j in range(len(offsets)): 
            focus0.append(focus[j][-1])

    angles.append(float(tilt))
    
###########################

sem.ResetClock()
sem.SuppressReports()
sem.SetUserSetting("ShiftToTiltAxis", 1, 1)

oldOffset = sem.ReportTiltAxisOffset()[0]

sem.Echo("Currently set tilt axis offset: " + str(oldOffset))

sem.Echo("##### Starting tilt axis offset estimation #####")
sem.Echo("Rough eucentricity...")
sem.Eucentricity(1)

sem.Echo("Autofocus...")
sem.G()

sem.Echo("Start tilt series...")
starttilt = -maxTilt
sem.TiltTo(starttilt)
sem.TiltBy(-increment)

offsets = [0]
if isinstance(offset, (list, tuple)):
    for val in offset:
        offsets.extend([-val, val])
else:
    offsets.extend([-offset, offset])

angles = []
focus = [[] for i in range(len(offsets))]
focus0 = []

steps = 2 * maxTilt / increment + 1

tilt = starttilt
for i in range(int(steps)):
    sem.Echo("Tilt to " + str(tilt) + " deg")
    Tilt(tilt)
    tilt += increment

relFocus = focus
for i in range(len(angles)):
    for j in range(len(offsets)):
        relFocus[j][i] -= focus0[j]

y0 = np.zeros(len(offsets))
y0_neg = np.zeros(len(offsets))
y0_pos = np.zeros(len(offsets))
for j in range(len(offsets)):
    popt, cov = optimize.curve_fit(dZ, angles, relFocus[j], p0=0)
    y0[j] = popt[0]
    popt, cov = optimize.curve_fit(dZ, [angle for angle in angles if angle <= 0], relFocus[j][:len([angle for angle in angles if angle <= 0])], p0=0)
    y0_neg[j] = popt[0]
    popt, cov = optimize.curve_fit(dZ, [angle for angle in angles if angle >= 0], relFocus[j][len([angle for angle in angles if angle < 0]):], p0=0)
    y0_pos[j] = popt[0]

sem.Echo("Remaining tilt axis offsets:")
for i in range(0, len(offsets)):
    sem.Echo("[" + str(offsets[i]) + "]: " + str(round(y0[i] + offsets[i], 2)) + " (neg: " + str(round(y0_neg[i] + offsets[i], 2)) + ", pos: " + str(round(y0_pos[i] + offsets[i], 2)) + ")")
avgOffset = sum(y0) / len(offsets)
avgOffset_neg = sum(y0_neg) / len(offsets)
avgOffset_pos = sum(y0_pos) / len(offsets)
sem.Echo("Average remaining tilt axis offset: " + str(round(avgOffset, 2)) + " (neg: " + str(round(avgOffset_neg, 2)) + ", pos: " + str(round(avgOffset_pos, 2)) + ")")
totalOffset = round(avgOffset + oldOffset, 2)
sem.Echo("##############################################")
sem.Echo("Estimated total tilt axis offset: " + str(totalOffset))
sem.Echo("##############################################")

sem.TiltTo(0)
sem.ResetImageShift()

sem.SuppressReports(0)
sem.ReportClock()

if plot:
    offsets, relFocus = zip(*sorted(zip(offsets, relFocus)))    # ensure right order for plot points
    fig = plt.figure(figsize=(8, 6), tight_layout=True)
    plt.title('Z Shifts [microns]')
    for i in range(len(angles)):
        values = []
        for j in range(len(offsets)):
            values.append(relFocus[j][i])
        plt.plot(offsets, values, label=str(angles[i]) + " deg")

    plt.legend()
    plt.show()

userInput = sem.YesNoBox("The estimated total tilt axis offset is " + str(totalOffset) + ". Do you want to set the new tilt axis offset?")
if userInput == 1:
    sem.SetTiltAxisOffset(totalOffset)
    sem.Echo("The new tilt axis offset has been set!")
sem.Exit()
EndMacro
Macro	60
ReportBeamTilt
EndMacro
Macro	61
ReportLastMarkerShift
EndMacro
Macro	62
ReportXLensDeflector 2
EndMacro
Macro	63
ReportComaVsISmatrix
EndMacro
Macro	64
AdjustBeamTiltforIS
EndMacro
Macro	65
ReportImageDistanceOffset
EndMacro
Macro	66
FixComaByCTF 1 1 0
EndMacro
Macro	67
SetImageDistanceOffset -100
EndMacro
Macro	68
ReportImageShift
EndMacro
Macro	69
SetImageShift 0 0
EndMacro
